#pragma once
#include "HSLUtilLib2.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LABWARE {
  global variable _LIBRARY_LABWARE_IsInit("False");
  global variable _LIBRARY_LABWARE_PlateLabwareCategories[];
  global variable _LIBRARY_LABWARE_PlateSequenceStrings[];
  global variable _LIBRARY_LABWARE_PlateLabwareNames[];
  global variable _LIBRARY_LABWARE_PlateLabwareTypes[];
  global variable _LIBRARY_LABWARE_PlateVolumes[];
  global variable _LIBRARY_LABWARE_PlateNames[];
  global variable _LIBRARY_LABWARE_PlateLoadingLocations[];
  global variable _LIBRARY_LABWARE_PlateLidSequenceStrings[];
  function AddSingleLabware( variable PlateName, variable PlateSequenceString, variable PlateVolume, variable PlateLabwareType, variable PlateLabwareName, variable PlateLabwareCategory, variable PlateLoadingLocation, variable PlateLidSequenceString ) void ;
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  function GetAllSequenceStrings( variable & SequenceStrings[] ) void ;
  function GetPlateLabwareCategory( variable & PlateNamesArray[], variable & LabwareCategoriesArray[] ) variable ;
  function GetPlateLabwareName( variable & PlateNamesArray[], variable & LabwareNamesArray[] ) variable ;
  function GetPlateLabwareType( variable & PlateNamesArray[], variable & LabwareTypesArray[] ) variable ;
  private function GetPlateLabwareTypeCommand( device & ML_STAR, variable i_CommandString ) variable ;
  function GetPlateLidSequenceString( variable & PlateNamesArray[], variable & LidSequenceStringsArray[] ) variable ;
  private function GetPlateLidSequenceStringCommand( device & ML_STAR, variable i_CommandString ) variable ;
  function GetPlateLoadingLocation( variable & PlateNamesArray[], variable & PlateLoadingLocationsArray[] ) variable ;
  function GetPlateNames( variable & o_PlateNames[] ) void ;
  function GetPlateSequenceString( variable & PlateNamesArray[], variable & PlateSequenceStringsArray[] ) variable ;
  private function GetPlateSequenceStringCommand( device & ML_STAR, variable i_CommandString ) variable ;
  function GetPlateVolume( variable & PlateNamesArray[], variable & PlateVolumesArray[] ) variable ;
  function Init( variable i_LabwareCommandString ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TOOLS::_InitLibrary();
    COMMANDS::_InitLibrary();
    RETURN::_InitLibrary();
    RETURNIDS::_InitLibrary();
  }
  function _ExitLibrary() {
    TOOLS::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    RETURN::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
  }

  function GetAllSequenceStrings( variable & SequenceStrings[] ) void {
    private variable Counter;
    private variable NumLabware;
    SequenceStrings.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        SequenceStrings.AddAsLast(_LIBRARY_LABWARE_PlateLidSequenceStrings.ElementAt( Counter -1));
        SequenceStrings.AddAsLast(_LIBRARY_LABWARE_PlateSequenceStrings.ElementAt( Counter -1));
      }
    }
  }

  function GetPlateSequenceString( variable & PlateNamesArray[], variable & PlateSequenceStringsArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    PlateSequenceStringsArray.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    PlateSequenceStringsArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (_LIBRARY_LABWARE_PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              PlateSequenceStringsArray.SetAt(Counter2-1, _LIBRARY_LABWARE_PlateSequenceStrings.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateVolume( variable & PlateNamesArray[], variable & PlateVolumesArray[] ) variable {
    private variable Counter;
    private variable NumLabware;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    PlateVolumesArray.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    PlateVolumesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (_LIBRARY_LABWARE_PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              PlateVolumesArray.SetAt(Counter2-1, _LIBRARY_LABWARE_PlateVolumes.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLabwareType( variable & PlateNamesArray[], variable & LabwareTypesArray[] ) variable {
    private variable Counter;
    private variable NumLabware;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LabwareTypesArray.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LabwareTypesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (_LIBRARY_LABWARE_PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LabwareTypesArray.SetAt(Counter2-1, _LIBRARY_LABWARE_PlateLabwareTypes.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLabwareName( variable & PlateNamesArray[], variable & LabwareNamesArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LabwareNamesArray.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LabwareNamesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (_LIBRARY_LABWARE_PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LabwareNamesArray.SetAt(Counter2-1, _LIBRARY_LABWARE_PlateLabwareNames.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLabwareCategory( variable & PlateNamesArray[], variable & LabwareCategoriesArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LabwareCategoriesArray.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LabwareCategoriesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (_LIBRARY_LABWARE_PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LabwareCategoriesArray.SetAt(Counter2-1, _LIBRARY_LABWARE_PlateLabwareCategories.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLoadingLocation( variable & PlateNamesArray[], variable & PlateLoadingLocationsArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    PlateLoadingLocationsArray.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    PlateLoadingLocationsArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (_LIBRARY_LABWARE_PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              PlateLoadingLocationsArray.SetAt(Counter2-1, _LIBRARY_LABWARE_PlateLoadingLocations.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLidSequenceString( variable & PlateNamesArray[], variable & LidSequenceStringsArray[] ) variable {
    private variable Counter;
    private variable NumLabware;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LidSequenceStringsArray.SetSize( 0);
    NumLabware=_LIBRARY_LABWARE_PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LidSequenceStringsArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (_LIBRARY_LABWARE_PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LidSequenceStringsArray.SetAt(Counter2-1, _LIBRARY_LABWARE_PlateLidSequenceStrings.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function Init( variable i_LabwareCommandString ) void {
    private variable Dict[];
    private variable LidSequencesString;
    private variable VolumesString;
    private variable LabwareNamesString;
    private variable LoadingLocationsString;
    private variable LabwareCategoriesString;
    private variable LabwareSequencesString;
    private variable Delimiter;
    private variable LabwareTypesString;
    private variable NamesString;
    COMMANDS::ParseCommandParametersString(i_LabwareCommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Name"), NamesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareSequence"), LabwareSequencesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LidSequence"), LidSequencesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LoadingLocation"), LoadingLocationsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Volume"), VolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareType"), LabwareTypesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareCategory"), LabwareCategoriesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareName"), LabwareNamesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, NamesString, _LIBRARY_LABWARE_PlateNames);
    TOOLS::ParseDelimitedList(Delimiter, LabwareSequencesString, _LIBRARY_LABWARE_PlateSequenceStrings);
    TOOLS::ParseDelimitedList(Delimiter, VolumesString, _LIBRARY_LABWARE_PlateVolumes);
    TOOLS::ParseDelimitedList(Delimiter, LabwareTypesString, _LIBRARY_LABWARE_PlateLabwareTypes);
    TOOLS::ParseDelimitedList(Delimiter, LabwareNamesString, _LIBRARY_LABWARE_PlateLabwareNames);
    TOOLS::ParseDelimitedList(Delimiter, LabwareCategoriesString, _LIBRARY_LABWARE_PlateLabwareCategories);
    TOOLS::ParseDelimitedList(Delimiter, LoadingLocationsString, _LIBRARY_LABWARE_PlateLoadingLocations);
    TOOLS::ParseDelimitedList(Delimiter, LidSequencesString, _LIBRARY_LABWARE_PlateLidSequenceStrings);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateNames);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateSequenceStrings);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateVolumes);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateLabwareTypes);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateLabwareNames);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateLabwareCategories);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateLoadingLocations);
    Util2::Debug::TraceArray(Translate(""), _LIBRARY_LABWARE_PlateLidSequenceStrings);
    _LIBRARY_LABWARE_IsInit = Translate("True");
  }

  function GetPlateNames( variable & o_PlateNames[] ) void {
    o_PlateNames.SetSize( 0);
    o_PlateNames=_LIBRARY_LABWARE_PlateNames;
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable Command;
    private variable ID;
    private variable ReturnString;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (_LIBRARY_LABWARE_IsInit != "True")
    {
      ID = RETURNIDS::FailCritical();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "GetSequenceStrings")
    {
      ReturnString = GetPlateSequenceStringCommand(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetLabwareTypes")
    {
      ReturnString = GetPlateLabwareTypeCommand(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetLidSequenceStrings")
    {
      ReturnString = GetPlateLidSequenceStringCommand(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    ID = RETURNIDS::FailCritical();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetPlateLabwareTypeCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable ReturnVal;
    private variable PlateNamesString;
    private variable Delimiter;
    private variable ID;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateNameStringsArray[];
    private variable Output[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateNames"), PlateNamesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, PlateNamesString, PlateNameStringsArray);
    GetPlateLabwareName(PlateNameStringsArray, Output);
    ReturnVal = TOOLS::ArrayToDelimitedList(Delimiter, Output);
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("PlateLabwareTypes Returned"), Translate("Response"), ReturnVal);
    return (ReturnString);
  }

  private function GetPlateSequenceStringCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable ReturnVal;
    private variable PlateNamesString;
    private variable Delimiter;
    private variable ID;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateNameStringsArray[];
    private variable Output[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateNames"), PlateNamesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, PlateNamesString, PlateNameStringsArray);
    GetPlateSequenceString(PlateNameStringsArray, Output);
    ReturnVal = TOOLS::ArrayToDelimitedList(Delimiter, Output);
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("PlateSequenceStrings Returned"), Translate("Response"), ReturnVal);
    return (ReturnString);
  }

  private function GetPlateLidSequenceStringCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable ReturnVal;
    private variable PlateNamesString;
    private variable Delimiter;
    private variable ID;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateNameStringsArray[];
    private variable Output[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateNames"), PlateNamesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, PlateNamesString, PlateNameStringsArray);
    GetPlateLidSequenceString(PlateNameStringsArray, Output);
    ReturnVal = TOOLS::ArrayToDelimitedList(Delimiter, Output);
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("LidSequenceStrings Returned"), Translate("Response"), ReturnVal);
    return (ReturnString);
  }

  function AddSingleLabware( variable PlateName, variable PlateSequenceString, variable PlateVolume, variable PlateLabwareType, variable PlateLabwareName, variable PlateLabwareCategory, variable PlateLoadingLocation, variable PlateLidSequenceString ) void {
    _LIBRARY_LABWARE_PlateNames.AddAsLast(PlateName);
    _LIBRARY_LABWARE_PlateLabwareCategories.AddAsLast(PlateLabwareCategory);
    _LIBRARY_LABWARE_PlateLabwareNames.AddAsLast(PlateLabwareName);
    _LIBRARY_LABWARE_PlateLabwareTypes.AddAsLast(PlateLabwareType);
    _LIBRARY_LABWARE_PlateLidSequenceStrings.AddAsLast(PlateLidSequenceString);
    _LIBRARY_LABWARE_PlateLoadingLocations.AddAsLast(PlateLoadingLocation);
    _LIBRARY_LABWARE_PlateSequenceStrings.AddAsLast(PlateSequenceString);
    _LIBRARY_LABWARE_PlateVolumes.AddAsLast(PlateVolume);
  }
} // library namespace
