#pragma once
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLTrcLib.hsl"
#include "IMCS\\HSLSeqLib.hsl"
#include "IMCS\\HSLTipCountingLib.hsl"
#include "HSLMETEDLib.hs_"
#include "389118_Pfizer\\IMCS\\Pfizer\\HSLMECCLib.hs_"
#include "389118_Pfizer\\IMCS\\Pfizer\\HSLPTLLib.hsl"

namespace PFIZERTIPCOUNTERVCURRENT {
  function ChooseTipsFTR( device & ML_STAR, sequence & Slim300Seq, sequence & Slim1000Seq, variable _Num_Slim300Tips, variable _Num_Slim1000Tips, variable & Tip300SlimCounter, variable & Tip1000Counter ) void ;
  function ChooseTipsNTR( device & ML_STAR, sequence & NTR50Seq, sequence & NTR300Seq, sequence NTR50WasteSeq, sequence NTR300WasteSeq, variable _Num_NTR50Tips, variable _Num_NTR300Tips, variable & Tip50Counter, variable & Tip300Counter, sequence & wasteNTR, sequence & waste300NTR ) void ;
  function SaveTipsFTR( device & ML_STAR, sequence Slim300Seq, sequence Slim1000Seq ) void ;
  function SaveTipsNTR( device & ML_STAR, sequence GripperToolSeq, sequence NTR300Seq, sequence NTR50Seq, sequence wasteNTR, sequence waste300NTR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    VISUAL_NTR_LIBRARY::_ExitLibrary();
  }

  function ChooseTipsNTR( device & ML_STAR, sequence & NTR50Seq, sequence & NTR300Seq, sequence NTR50WasteSeq, sequence NTR300WasteSeq, variable _Num_NTR50Tips, variable _Num_NTR300Tips, variable & Tip50Counter, variable & Tip300Counter, sequence & wasteNTR, sequence & waste300NTR ) void {
    private dialog customDialog_1;
    private dialog customDialog_2;
    private variable loopCounter9;
    private variable _Avail;
    private variable _NTR_Total;
    private variable _Num_NTR300;
    private variable _Temp;
    private variable _Num_NTR50;
    private variable _Req;
    private variable FileCheckReturn;
    private variable _Num_Slim1000Tips;
    Tip50Counter = 0;
    Tip300Counter = 0;
    { sequence __temp; wasteNTR = __temp; }
    { sequence __temp; waste300NTR = __temp; }
    Tip50Counter = Translate("Tip50Counter");
    Tip300Counter = Translate("Tip300Counter");
    _NTR_Total = 768;
    _Temp = _Num_NTR50Tips % 8;
    if (_Temp != 0)
    {
      _Temp = 8 - _Temp;
      _Num_NTR50Tips = _Num_NTR50Tips + _Temp;
    }
    if (_Num_NTR50Tips == 8)
    {
      _Num_NTR50Tips = _Num_NTR50Tips + 8;
    }
    _Temp = _Num_NTR300Tips % 8;
    if (_Temp != 0)
    {
      _Temp = 8 - _Temp;
      _Num_NTR300Tips = _Num_NTR300Tips + _Temp;
    }
    if (_Num_NTR300Tips == 8)
    {
      _Num_NTR300Tips = _Num_NTR300Tips + 8;
    }
    if (_Num_NTR50Tips > 0)
    {
      {
        loopCounter9 = 0;
        while (1 == 1)
        {
          loopCounter9 = loopCounter9 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, NTR50Seq, Translate("Tip50Counter"), Translate("Edit 50ul Tip Locations"), 1, 999);
          _Num_NTR50 = ML_STAR.seq_Tips_NTR_50ul.GetCurrentPosition();
          _Num_NTR50 = _Num_NTR50 - 1;
          _Num_NTR50 = _NTR_Total - _Num_NTR50;
          if (_Num_NTR50Tips <= _Num_NTR50)
          {
            VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(NTR50WasteSeq, 0, wasteNTR, ML_STAR);
            break;
          }
          _Req = _Num_NTR50Tips;
          _Avail = _Num_NTR50;
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBox1.Text", _Req );
          customDialog_2.SetCustomDialogProperty( "textBox2.Text", _Avail );
          customDialog_2.ShowCustomDialog();
          FileCheckReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        }
      }
    }
    if (_Num_NTR300Tips > 0)
    {
      {
        loopCounter9 = 0;
        while (1 == 1)
        {
          loopCounter9 = loopCounter9 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, NTR300Seq, Translate("Tip300Counter"), Translate("Edit 300ul Tip Locations"), 1, 999);
          _Num_NTR300 = ML_STAR.seq_Tips_NTR_300ul.GetCurrentPosition();
          _Num_NTR300 = _Num_NTR300 - 1;
          _Num_NTR300 = _NTR_Total - _Num_NTR300;
          if (_Num_NTR300Tips <= _Num_NTR300)
          {
            VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(NTR300WasteSeq, 0, waste300NTR, ML_STAR);
            break;
          }
          _Req = _Num_NTR300Tips;
          _Avail = _Num_NTR300;
          customDialog_1.InitCustomDialog("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");
          customDialog_1.SetCustomDialogProperty( "textBox1.Text", _Req );
          customDialog_1.SetCustomDialogProperty( "textBox2.Text", _Avail );
          customDialog_1.ShowCustomDialog();
          FileCheckReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        }
      }
    }
    TrcTrace(Translate("50NTR"), _Num_NTR50);
    TrcTrace(Translate("50NTRReq"), _Num_NTR50Tips);
    TrcTrace(Translate("300NTR"), _Num_NTR300);
    TrcTrace(Translate("300NTRReq"), _Num_NTR300Tips);
  }

  function SaveTipsNTR( device & ML_STAR, sequence GripperToolSeq, sequence NTR300Seq, sequence NTR50Seq, sequence wasteNTR, sequence waste300NTR ) void {
    private variable _Temp;
    _Temp = NTR300Seq.GetCurrentPosition();
    if (_Temp != 1)
    {
      TrcTrace(Translate("Saving 300 NTR"), Translate(""));
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, NTR300Seq, Translate("Tip300Counter"), waste300NTR, GripperToolSeq, 1, 1, 0, waste300NTR, 0, 8, 0, 1, Translate("Please Reload 300 NTR Tips"), 999);
    }
    _Temp = NTR50Seq.GetCurrentPosition();
    if (_Temp != 1)
    {
      TrcTrace(Translate("Saving 50 NTR"), Translate(""));
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, NTR50Seq, Translate("Tip50Counter"), wasteNTR, GripperToolSeq, 1, 1, 0, wasteNTR, 0, 8, 0, 1, Translate("Please Reload 50 NTR Tips"), 0);
    }
  }

  function ChooseTipsFTR( device & ML_STAR, sequence & Slim300Seq, sequence & Slim1000Seq, variable _Num_Slim300Tips, variable _Num_Slim1000Tips, variable & Tip300SlimCounter, variable & Tip1000Counter ) void {
    private dialog customDialog_3;
    private dialog customDialog_4;
    private dialog customDialog_5;
    private dialog customDialog_6;
    private variable loopCounter9;
    private variable _Avail;
    private variable Tip1000SlimCounter;
    private variable _Num_Slim300;
    private variable _NTR_Total;
    private variable _Num_NTR300;
    private variable _Temp;
    private variable _Num_Slim1000;
    private variable _Num_NTR50;
    private variable _Req;
    private variable FileCheckReturn;
    Tip300SlimCounter = 0;
    Tip1000Counter = 0;
    Tip300SlimCounter = Translate("Tip300SlimCounter");
    Tip1000SlimCounter = Translate("Tip1000SlimCounter");
    _Temp = _Num_Slim300Tips % 8;
    if (_Temp != 0)
    {
      _Temp = 8 - _Temp;
      _Num_Slim300Tips = _Num_Slim300Tips + _Temp;
    }
    if (_Num_Slim300Tips == 8)
    {
      _Num_Slim300Tips = _Num_Slim300Tips + 8;
    }
    _Temp = _Num_Slim1000Tips % 8;
    if (_Temp != 0)
    {
      _Temp = 8 - _Temp;
      _Num_Slim1000Tips = _Num_Slim1000Tips + _Temp;
    }
    if (_Num_Slim1000Tips == 8)
    {
      _Num_Slim1000Tips = _Num_Slim1000Tips + 8;
    }
    if (_Num_Slim300Tips > 0)
    {
      TipCount::Read2(Slim300Seq, Translate("Tip300SlimCounter"), ML_STAR);
      {
        loopCounter9 = 0;
        while (1 == 1)
        {
          loopCounter9 = loopCounter9 + 1;
          TipCount::Edit2(Slim300Seq, Translate("Tip300SlimCounter"), ML_STAR, 9999);
          _Num_Slim300 = SeqGetTotal(ML_STAR.MAM_Slim300_Tips);
          if (_Num_Slim300Tips <= _Num_Slim300)
          {
            break;
          }
          _Req = _Num_Slim300Tips;
          _Avail = _Num_Slim300;
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogProperty( "textBox1.Text", _Req );
          customDialog_3.SetCustomDialogProperty( "textBox2.Text", _Avail );
          customDialog_3.ShowCustomDialog();
          FileCheckReturn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        }
      }
      TipCount::Write2(Slim300Seq, Translate("Tip300SlimCounter"), ML_STAR);
    }
    if (_Num_Slim1000Tips > 0)
    {
      TipCount::Read2(Slim1000Seq, Translate("Tip1000SlimCounter"), ML_STAR);
      {
        loopCounter9 = 0;
        while (1 == 1)
        {
          loopCounter9 = loopCounter9 + 1;
          TipCount::Edit2(Slim1000Seq, Translate("Tip1000SlimCounter"), ML_STAR, 999);
          _Num_Slim1000 = SeqGetTotal(ML_STAR.seq_Tips_FTR_1000ul);
          if (_Num_Slim1000Tips <= _Num_Slim1000)
          {
            break;
          }
          _Req = _Num_Slim1000Tips;
          _Avail = _Num_Slim1000;
          customDialog_5.InitCustomDialog("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");
          customDialog_5.SetCustomDialogProperty( "textBox1.Text", _Req );
          customDialog_5.SetCustomDialogProperty( "textBox2.Text", _Avail );
          customDialog_5.ShowCustomDialog();
          FileCheckReturn = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
        }
      }
      TipCount::Write2(Slim1000Seq, Translate("Tip1000SlimCounter"), ML_STAR);
    }
    TrcTrace(Translate("300Slim"), _Num_Slim300);
    TrcTrace(Translate("300SlimReq"), _Num_Slim300Tips);
    TrcTrace(Translate("1000Slim"), _Num_Slim1000);
    TrcTrace(Translate("1000SlimReq"), _Num_Slim1000Tips);
  }

  function SaveTipsFTR( device & ML_STAR, sequence Slim300Seq, sequence Slim1000Seq ) void {
    private variable _Temp;
    private sequence wasteNTR;
    private sequence waste300NTR;
    _Temp = Slim1000Seq.GetCurrentPosition();
    if (_Temp != 1)
    {
      TrcTrace(Translate("Saving Slim 1000 FTR"), Translate(""));
      TipCount::Write2(Slim1000Seq, Translate("Tip1000SlimCounter"), ML_STAR);
    }
    _Temp = Slim300Seq.GetCurrentPosition();
    if (_Temp != 1)
    {
      TrcTrace(Translate("Saving Slim 300 FTR"), Translate(""));
      TipCount::Write2(Slim300Seq, Translate("Tip300SlimCounter"), ML_STAR);
    }
  }
} // library namespace
