#pragma once
#include "IMCS\\HSLSeqLib.hsl"
#include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl"
#include "VirtualLabware_V2.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLTrcLib.hsl"
#include "HSLStrLib.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\SetCuttedTipType_Universal_V2.hs_"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "HSLUtilLib.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\HSLExtensions\\Venus.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\SMTs\\Asp_Disp_FW\\STAR_Channel_MPH_fwCmd.hs_"
#include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PFIZERTOOLSVCURRENT {
  function AssembleSampleSeq( sequence & _SampleSeq, variable _StartPos, variable _EndPos, variable & _PosArray[] ) void ;
  function GetContacts(  ) void ;
  function GetIndex( variable _SeqStartPosition, sequence & _ControllingSeq ) variable ;
  function NotifyContacts( variable Subject, variable Body ) void ;
  function PostIncubationLiquidCheck( device & ML_Star, sequence Plate, sequence & Diluent, sequence & Tips300uL, variable StartPosition, variable EndPosition, variable ExpectedVol, variable VolThreshold ) void ;
  function SetSequence( sequence & Sequence, variable PlateStartPosition, variable PlateEndPosition ) void ;
  function Wait_for_Timer( timer & IncubationTimer ) void ;
  function _96WellAlphanumericToNumeric( variable Letter, variable Number ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_InitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_InitLibrary();
  }
  function _ExitLibrary() {
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_ExitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_ExitLibrary();
  }

  function GetIndex( variable _SeqStartPosition, sequence & _ControllingSeq ) variable {
    private variable _Index;
    _Index = _ControllingSeq.GetCurrentPosition();
    _Index = _Index - _SeqStartPosition;
    _Index = 1 + _Index;
    return (_Index);
  }

  function SetSequence( sequence & Sequence, variable PlateStartPosition, variable PlateEndPosition ) void {
    Sequence.SetCount(PlateEndPosition);
    Sequence.SetCurrentPosition(PlateStartPosition);
  }

  function GetContacts(  ) void {
    private dialog customDialog_1;
    private variable SenderEmail;
    private variable Comma;
    private variable ContactInfo;
    private file _Path_Contacts;
    private variable Empty;
    private variable InstrumentDescription;
    private dialog customDialog_2;
    private variable File;
    private variable loopCounter1;
    private variable FileStrip;
    private variable Return;
    private file file1;
    private file FileHandle;
    SenderEmail = Util::GetEMailAddressOfSender();
    InstrumentDescription = Util::GetSMTPServerHostName();
    ContactInfo = Translate("Email@email.com, xxx-xxx-xxxx, xxxxxxxxx, ect.");
    Return = 2;
    {
      loopCounter1 = 0;
      while (Return == 2)
      {
        loopCounter1 = loopCounter1 + 1;
        customDialog_2.InitCustomDialog("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");
        customDialog_2.SetCustomDialogProperty( "textBox1.Text", ContactInfo );
        customDialog_2.ShowCustomDialog();
        Return = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        ContactInfo = customDialog_2.GetCustomDialogProperty( "textBox1.Text" );
        if (Return == 2)
        {
          FileHandle.AddField(1, ContactInfo, hslString);
          FileHandle.SetDelimiter(hslAsciiText);
          if( 0 == FileHandle.Open("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Contacts.txt", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Contacts.txt", "HxMetEdCompCmd");
          }
          if( 0 == FileHandle.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != FileHandle.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          FileHandle.RemoveFields();
          StrReplace(ContactInfo, InstrumentDescription, Translate(""));
          StrReplace(ContactInfo, SenderEmail, Translate(""));
          StrTrimLeft(ContactInfo, Translate(" "));
          StrTrimLeft(ContactInfo, Translate(","));
          StrTrimLeft(ContactInfo, Translate(" "));
          StrTrimLeft(ContactInfo, Translate(","));
          StrTrimRight(ContactInfo, Translate(" "));
          StrTrimRight(ContactInfo, Translate(","));
          StrTrimRight(ContactInfo, Translate(" "));
          StrTrimRight(ContactInfo, Translate(","));
        }
      }
    }
    Empty = Translate("");
    Comma = Translate(", ");
    ContactInfo = StrConcat8(InstrumentDescription, Comma, ContactInfo, Comma, SenderEmail, Empty, Empty, Empty);
    _Path_Contacts.AddField(1, ContactInfo, hslString);
    _Path_Contacts.SetDelimiter(hslAsciiText);
    if( 0 == _Path_Contacts.Open("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Contacts.txt", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Contacts.txt", "HxMetEdCompCmd");
    }
    if( 0 == _Path_Contacts.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != _Path_Contacts.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _Path_Contacts.RemoveFields();
  }

  function NotifyContacts( variable Subject, variable Body ) void {
    private variable Empty;
    private variable Comma;
    private variable Message;
    private file _Path_Message;
    private variable code;
    private event obj;
    Empty = Translate("");
    Comma = Translate("...,... ");
    Message = StrConcat4(Empty, Subject, Comma, Body);
    _Path_Message.AddField(1, Message, hslString);
    _Path_Message.SetDelimiter(hslAsciiText);
    if( 0 == _Path_Message.Open("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Message.txt", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Message.txt", "HxMetEdCompCmd");
    }
    if( 0 == _Path_Message.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != _Path_Message.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _Path_Message.RemoveFields();
    if(0){
      Util::SyncShell(Translate("C:\\windows\\system32\\cmd.exe /C  \"\"C:\\Program Files\\Python36\\python.exe\" \"C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Email.py\"\""), 1, code);
    }
    Util::AsyncShell(Translate("C:\\windows\\system32\\cmd.exe /C  \"\"C:\\Program Files\\Python36\\python.exe\" \"C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\EmailContacts\\Email.py\"\""), 1, obj, code);
  }

  function AssembleSampleSeq( sequence & _SampleSeq, variable _StartPos, variable _EndPos, variable & _PosArray[] ) void {
    private variable _PosID;
    private variable _Counter;
    private variable _Pos;
    private variable _LabID;
    private variable _NumSamples;
    private sequence _NewSampleSeq;
    _NumSamples = _EndPos - _StartPos;
    _NumSamples = _NumSamples + 1;
    _StartPos = _StartPos - 1;
    {
      for(_Counter = 0; _Counter < _NumSamples;)
      {
        _Counter = _Counter + 1;
        if (_PosArray.ElementAt( _Counter -1) == 0)
        {
          _Pos = _StartPos + _Counter;
          _SampleSeq.SetCount(_Pos);
          _SampleSeq.SetCurrentPosition(_Pos);
          _LabID = SeqGetLabwareId(_SampleSeq);
          _PosID = SeqGetPositionId(_SampleSeq);
          SeqAdd(_NewSampleSeq, _LabID, _PosID);
        }
        else
        {
          _Pos = _StartPos + _PosArray.ElementAt( _Counter -1);
          _SampleSeq.SetCount(_Pos);
          _SampleSeq.SetCurrentPosition(_Pos);
          _LabID = SeqGetLabwareId(_SampleSeq);
          _PosID = SeqGetPositionId(_SampleSeq);
          SeqAdd(_NewSampleSeq, _LabID, _PosID);
        }
      }
    }
    SeqCopySequence(_SampleSeq, _NewSampleSeq);
  }

  function Wait_for_Timer( timer & IncubationTimer ) void {
    private variable TimerWasStopped;
    private variable ActualElapsedTime;
    Trace ("**********************************");
    Trace ("***** Waiting for timer........");
    Trace ("**********************************");
    TimerWasStopped = IncubationTimer.WaitTimer(hslTrue, hslTrue);
    if (0 == TimerWasStopped)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (TimerWasStopped == 3)
    {
      MECC::TraceComment(Translate("***** WARNING!  The timer was stopped prematurely! *****"));
    }
    ActualElapsedTime = IncubationTimer.GetElapsedTime();
    Trace ("***** Actual Elapsed Time (seconds):  ", ActualElapsedTime, "        *****");
  }

  function _96WellAlphanumericToNumeric( variable Letter, variable Number ) variable {
    private variable ReturnVal;
    private variable NumberTest;
    MECC::TraceComment(Translate("Convert letter to ascii character then check if it is within range. If so, convert to absolute number and proceed"));
    Letter = StrMakeUpper(Letter);
    Letter = StrStrToAscii(Letter);
    if (Letter < 65)
    {
      return (-1);
    }
    if (Letter > 72)
    {
      return (-1);
    }
    Letter = Letter - 64;
    NumberTest = StrIsDigit(Number);
    if (NumberTest != 1)
    {
      return (-1);
    }
    Number = StrIVal(Number);
    if (Number < 1)
    {
      return (-1);
    }
    if (Number > 12)
    {
      return (-1);
    }
    Number = Number - 1;
    ReturnVal = Number * 8;
    ReturnVal = ReturnVal + Letter;
    return (ReturnVal);
  }

  function PostIncubationLiquidCheck( device & ML_Star, sequence Plate, sequence & Diluent, sequence & Tips300uL, variable StartPosition, variable EndPosition, variable ExpectedVol, variable VolThreshold ) void {
    private variable AverageVol;
    private variable MissingVol;
    private variable LabID;
    private variable MeasuredTipVol;
    private variable NewPos;
    private variable MixVol;
    private variable loopCounter1;
    private variable PosID;
    private variable Count;
    private variable loopCounter2;
    private variable LoopCount;
    private variable FloatString;
    private variable loopCounter5;
    private variable WellIncrement;
    private sequence TestSequence;
    WellIncrement = EndPosition - StartPosition;
    WellIncrement = WellIncrement + 1;
    if (WellIncrement <= 8)
    {
      LoopCount = WellIncrement;
      WellIncrement = 1;
    }
    else
    {
      LoopCount = 8;
      WellIncrement = WellIncrement / (8 * 1.0);
    }
    TrcTrace(Translate("Increment"), WellIncrement);
    NewPos = StartPosition;
    {
      for(loopCounter1 = 0; loopCounter1 < LoopCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        Plate.SetCount(NewPos);
        Plate.SetCurrentPosition(NewPos);
        LabID = SeqGetLabwareId(Plate);
        PosID = SeqGetPositionId(Plate);
        SeqAdd(TestSequence, LabID, PosID);
        NewPos = NewPos + WellIncrement;
        FloatString = StrFStr(NewPos);
        NewPos = StrIVal(FloatString);
      }
    }
    TrcTraceSequence(TestSequence);
    TestSequence.SetCurrentPosition(1);
    {
      loopCounter2 = 0;
      while (
         (TestSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, TestSequence, 1, Tips300uL, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_Star._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        HSLML_STAR::MeasureContainerVolume2(ML_Star, TestSequence, 1, Translate("11111111"), 0, 1, 0.0);
        ML_Star._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (TestSequence.GetCurrentPosition() > 0 && TestSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      TestSequence.SetMax(TestSequence.GetTotal());
      Tips300uL.SetMax(Tips300uL.GetTotal());
      TestSequence.SetCurrentPosition(1);
    }
    AverageVol = 0;
    {
      for(Count = 0; Count < LoopCount;)
      {
        Count = Count + 1;
        MeasuredTipVol = HSLML_STAR::GetContainerVolume(Count);
        AverageVol = AverageVol + MeasuredTipVol;
      }
    }
    AverageVol = AverageVol / (LoopCount * 1.0);
    AverageVol = AverageVol * 1000;
    TrcTrace(Translate("Average tip volume accross 8 random wells: "), AverageVol);
    MissingVol = ExpectedVol - AverageVol;
    TrcTrace(Translate("Volume required to add to each well: "), MissingVol);
    Plate.SetCount(EndPosition);
    Plate.SetCurrentPosition(StartPosition);
    if (ExpectedVol >= 300)
    {
      MixVol = 300;
    }
    else
    {
      MixVol = ExpectedVol;
    }
    if (MissingVol > 300)
    {
      MissingVol = 300;
    }
    if (MissingVol > VolThreshold)
    {
      {
        loopCounter5 = 0;
        while (
           (Plate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Diluent, 1, Plate, 1, Tips300uL, 1);
          loopCounter5 = loopCounter5 + 1;
          ML_Star._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_Star._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_Star._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_Star._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Plate.GetCurrentPosition() > 0 && Plate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Diluent.SetMax(Diluent.GetTotal());
        Plate.SetMax(Plate.GetTotal());
        Tips300uL.SetMax(Tips300uL.GetTotal());
        Diluent.SetCurrentPosition(1);
        Plate.SetCurrentPosition(1);
      }
    }
  }
} // library namespace
