 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "FileHandling_HSLFiLibEx\\HSLFilLibEx.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Array2D.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\PfizerTools\\PfizerToolsVCurrent.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tip Counting\\PfizerTipCounterVCurrent.hs_" }
 namespace _Method { #include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl" }
 namespace _Method { #include "VirtualLabware_V2.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Desalting\\PfizerDesaltingVCurrent.hs_" }
 namespace _Method { #include "HSLVacuuBrandPump.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\PfizerTools\\PfizerToolsVCurrent.hs_" }
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Loading\\DeckLoadingVCurrent.hs_" }
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.res"
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Heater\\Module\\Heater.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLLabwareStateLib.hsl" }
variable loopCounter1;
variable Temp;
variable Out;
variable code;
variable Command[];
variable ParamOut[];
variable Index;
variable ParamsSize;
variable PlateList[];
variable _;
variable _Ret;
sequence Temp_Seq;
variable VolumeList[];
variable LidSequenceList[];
variable LabwareSequenceList[];
variable LoadingPositionList[];
variable NumLabware;
variable LabwareArray[];
variable Plate;
variable Volume;
variable loopCounter4;
variable NumBadSequences;
variable BadSequences[];
variable HeaterIndex;
variable HeaterType;
variable Handle;
variable HeaterID;
variable NumHeaters;
variable HeaterTemp;
variable _Array_HeaterID[];
variable _Array_HeaterType[];
variable _Array_Handle[];
variable _Array_HeaterHandle[];
variable HeaterRPM;
variable CloseWidth;
variable OpenWidth;
timer _Handle_Timer;
sequence _Sequence_Source;
sequence _Sequence_Destination;
variable TimerTime;
variable Wait;
variable Message;
variable Subject;
variable ID;
variable _Sequence_Source_String;
variable _Sequence_Destination_String;
variable DialogOut;
variable loopCounter2;
variable LabwareType;
variable LidSequenceListIndex;
variable LoadingLocation;
variable LabwareSequence;
variable LabwareTypeListIndex;
variable LidSequence;
variable LabwareCategory;
variable LoadingPositionListIndex;
variable VolumeListIndex;
variable LabwareSequenceListIndex;
variable LabwareCategoryListIndex;
variable PlateListIndex;
variable LabwareCategoryList[];
variable LabwareTypeList[];
variable loopCounter5;
sequence Seq;
variable TitleOut[];
variable SourceString;
variable TypeString;
variable VolumeString;
variable DestinationString;
variable BufferString;
sequence None;
sequence _Desalt_Source;
sequence _Desalt_Destination;
sequence _Desalt_Buffer;
variable _Desalt_TipType;
variable _Desalt_LoadingArray[];
variable _Desalt_Sets;
variable ParseNumeric;
variable ParseAlpha;
variable Tip300Counter;
variable Tip50Counter;
variable Tip1000Counter;
variable Tip300SlimCounter;
sequence wasteNTR;
sequence waste300NTR;
variable _SampleNumber;
variable _SampleEndPosition;
variable _SampleStartPosition;
variable WasteString;
sequence _Desalt_Waste;
variable Eject;
dialog customDialog_1;
dialog customDialog_2;
variable _Vacuum_PumpID;
variable _Vacuum_PumpComPort;
variable loopCounter11;
variable Mix50[];
variable Mix300[];
variable Mix1000[];
variable _PreRun_PipetteUsedIndex;
variable _PreRun_NotifyUsedIndex;
variable _PreRun_IsUsedSize;
variable _PreRun_TransportUsedIndex;
variable _PreRun_TimerUsedIndex;
variable _PreRun_VacuumUsedIndex;
variable _PreRun_DesaltUsedIndex;
variable _PreRun_HeaterUsedIndex;
variable _PreRun_IsUsed[];
variable _Pipette_NumTips;
variable _Pipette_FTR1000Index;
variable _Pipette_FTR300SlimIndex;
variable _Pipette_NTR300Index;
variable _Pipette_NTR50Index;
variable _Pipette_UsedTips[];
variable _Desalt_VolumeIndex;
variable _Desalt_TypeIndex;
variable Types[];
variable Volumes[];
variable Tips;
variable NumTipsFTR1000;
variable NumTipsFTR300Slim;
variable NumTipsNTR300;
variable NumTipsNTR50;
variable Lid;
variable Type;
sequence DispenseSequence50;
sequence DispenseSequence300;
sequence AspirateSequence50;
sequence AspirateSequence300;
sequence DispenseSequence1000;
sequence AspirateSequence1000;
variable SequenceArray[];
variable CategoryArray[];
variable LidArray[];
variable LabwareName;
variable LabwareNameListIndex;
variable LabwareNameList[];
variable NumLids;
variable PositionArray[];
variable Position;
variable Storage;
variable IsPresent;
variable Mix;
variable MixVolume;
variable MixVolume1000[];
variable MixVolume300[];
variable MixVolume50[];
variable TransferVolumeString;
variable DestinationPositionString;
variable SourcePositionString;
variable TotalString;
variable MixString;
variable DispensePosID;
variable AspirateLabID;
variable AspiratePosID;
variable DispenseLabID;
variable TransferVolume;
variable NumTransfers;
sequence AspirateSequence;
sequence DispenseSequence;
variable SourceList[];
variable DestinationList[];
variable DestinationPositionList[];
variable SourcePositionList[];
variable TransferVolumeList[];
variable MixList[];
variable TotalList[];
variable DispensePosition;
variable AspiratePosition;
variable LiquidFollowing;
variable FixedHeight;
variable cLLD;
variable cLLD1000[];
variable cLLD300[];
variable LiquidFollowing50[];
variable LiquidFollowing1000[];
variable FixedHeight1000[];
variable LiquidFollowing300[];
variable FixedHeight50[];
variable TransferVolume50[];
variable FixedHeight300[];
variable TransferVolume300[];
variable TransferVolume1000[];
variable cLLD50[];
variable DispenseHeight;
variable TotalVolume;
variable DispenseHeight50[];
variable DispenseHeight1000[];
variable DispenseHeight300[];
variable SequenceSize;
variable Counter;
variable count;
variable PlateSequenceList[];
variable intDaisyHHC1;
variable strCOMHHC1;
variable intHHC1Return;
variable arrHHC1[];
variable _PreRun_LogUsedIndex;
variable TitleString;
variable CoordinateString;
dialog customDialog_3;
variable _Log_Selection;
variable _Log_Options[];
variable _Log_Text;
dialog customDialog_4;
variable VacuumTime;
variable VacuumPressure;
timer VacuumReleaseTimer;
variable _Vacuum_Plate;
variable Check;
sequence AspirateSequence5;
sequence DispenseSequence5;
variable DispenseHeight5[];
variable MixVolume5[];
variable FixedHeight5[];
variable LiquidFollowing5[];
variable Mix5[];
variable TransferVolume5[];
variable cLLD5[];
variable ISwap_Moved;
variable LabID;
variable ntrANGLE;
variable iswapPresent;
variable ntrX;
variable ntrY;
variable ntrZ;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.lay", "ML_STAR", hslTrue);
dialog customDialog_5;
variable _PreRun_StatusUpdateUsedIndex;
dialog customDialog_6;
variable _STATUS_UPDATE;
variable TransfersRequired;
variable loopCounter3;
variable PostDispenseHeight;
variable PreDispenseHeight;
variable DispenseHeightDifference;
variable DispenseHeightStep;
variable PreDestinationHeightString;
variable PostDestinationHeightString;
variable PostDestinationHeightList[];
variable PreDestinationHeightList[];
variable Height;
global variable ScriptRootPath;
global variable PythonRootPath;
variable Return;
variable OutHeights[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PFIZERTOOLSVCURRENT::_InitLibrary();
    PFIZERTIPCOUNTERVCURRENT::_InitLibrary();
    PFIZERDESALTINGVCURRENT::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    DECKLOADINGVCURRENT::_InitLibrary();
    PIPETTE::_InitLibrary();
    HEATER::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ScriptRootPath = Translate("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor");
    PythonRootPath = Translate("C:\\Program Files (x86)\\Python36-32");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    StartSystem();
    _PreRun_IsUsedSize = 9;
    _PreRun_IsUsed.SetSize(0);
    {
      for(Counter = 0; Counter < _PreRun_IsUsedSize;)
      {
        Counter = Counter + 1;
        _PreRun_IsUsed.AddAsLast(Translate("False"));
      }
    }
    _PreRun_PipetteUsedIndex = 1;
    _PreRun_NotifyUsedIndex = 2;
    _PreRun_DesaltUsedIndex = 3;
    _PreRun_VacuumUsedIndex = 4;
    _PreRun_HeaterUsedIndex = 5;
    _PreRun_TransportUsedIndex = 6;
    _PreRun_TimerUsedIndex = 7;
    _PreRun_LogUsedIndex = 8;
    _PreRun_StatusUpdateUsedIndex = 9;
    LabwareArray.SetSize(0);
    PlateListIndex = 1;
    LabwareSequenceListIndex = 2;
    LidSequenceListIndex = 3;
    LoadingPositionListIndex = 4;
    VolumeListIndex = 5;
    LabwareTypeListIndex = 6;
    LabwareCategoryListIndex = 7;
    LabwareNameListIndex = 8;
    _SampleStartPosition = 0;
    _SampleEndPosition = 0;
    _SampleNumber = 0;
    _Pipette_NumTips = 4;
    _Pipette_UsedTips.SetSize(0);
    {
      for(Counter = 0; Counter < _Pipette_NumTips;)
      {
        Counter = Counter + 1;
        _Pipette_UsedTips.AddAsLast(0);
      }
    }
    _Pipette_NTR50Index = 1;
    _Pipette_NTR300Index = 2;
    _Pipette_FTR300SlimIndex = 3;
    _Pipette_FTR1000Index = 4;
    FLIPTUBETOOL::Initialize(0);
    _Array_HeaterID.SetSize(0);
    _Array_HeaterType.SetSize(0);
    _Array_HeaterHandle.SetSize(0);
    NumHeaters = 0;
    _Vacuum_PumpComPort = 1;
    _Vacuum_PumpID = 1;
    _Vacuum_Plate = 0;
    if( 0 == _Handle_Timer.SetTimer(1) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _Desalt_LoadingArray.SetSize(0);
    _Desalt_TypeIndex = 1;
    _Desalt_VolumeIndex = 2;
    _Desalt_TipType = 0;
    SeqCopySequence(_Desalt_Destination, None);
    SeqCopySequence(_Desalt_Source, None);
    SeqCopySequence(_Desalt_Buffer, None);
    SeqCopySequence(_Desalt_Waste, None);
    _Log_Options.SetSize(0);
    _Log_Options.AddAsLast(Translate("Run From Beginning of Method"));
    _Log_Options.AddAsLast(Translate("Run From Above Step"));
    _Log_Options.AddAsLast(Translate("Run Step Before Above Step"));
    _Log_Options.AddAsLast(Translate("Run Step After Above Step"));
    Out = ChooseMethodFile();
    strCOMHHC1 = Translate("COM4");
    intDaisyHHC1 = 0;
    intHHC1Return = 0;
    arrHHC1.SetSize(1);
    intHHC1Return = HamiltonHeaterCooler::Connect(strCOMHHC1, 5, intDaisyHHC1, arrHHC1);
    HamiltonHeaterCooler::SetTemperature(arrHHC1.ElementAt( 1 -1), 0.0, 8.0, 4.0, 0, 1);
    MECC::TraceComment(Translate("##################################\n########### Pre Run and Init ###########\n##################################"));
    RunMakerScript(Out, 1, Translate("Init"));
    {
      loopCounter4 = 0;
      while ("" == "")
      {
        loopCounter4 = loopCounter4 + 1;
        GetCommand(Command);
        if (Command.ElementAt( 1 -1) == "END")
        {
          break;
        }
        ParseCommand(Command.ElementAt( 1 -1), TitleOut, ParamOut);
        Util2::Debug::TraceArray(Translate(""), Command);
        if (TitleOut.ElementAt( 1 -1) == "PreRun")
        {
          ParamsSize=Command.GetSize();
          ParamsSize = ParamsSize - 2;
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "Check Sequences")
          {
            TrcTrace(Translate("Check Sequences"), Translate(""));
            BadSequences.SetSize(0);
            {
              for(count = 0; count < ParamsSize;)
              {
                count = count + 1;
                Index = count + 2;
                ParseCommand(Command.ElementAt( Index -1), TitleOut, ParamOut);
                _Ret = DevGetSequenceRef(ML_STAR, ParamOut.ElementAt( 1 -1), Temp_Seq);
                if (_Ret == 0)
                {
                  BadSequences.AddAsLast(ParamOut.ElementAt( 1 -1));
                }
              }
            }
            NumBadSequences=BadSequences.GetSize();
            if (NumBadSequences > 0)
            {
              TrcTrace(Translate("*******************************************************************"), Translate("ATTENTION*******************************************************************"));
              Util2::Debug::TraceArray(Translate("These sequences are not found in the deck layout. Please check the config file and try again..."), BadSequences);
              TrcTrace(Translate("*******************************************************************"), Translate("ATTENTION*******************************************************************"));
              abort;
            }
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Labware")
          {
            TrcTrace(Translate("Labware"), Translate(""));
            PlateList.SetSize(0);
            LabwareSequenceList.SetSize(0);
            LidSequenceList.SetSize(0);
            LoadingPositionList.SetSize(0);
            VolumeList.SetSize(0);
            LabwareTypeList.SetSize(0);
            LabwareCategoryList.SetSize(0);
            LabwareNameList.SetSize(0);
            {
              for(count = 0; count < ParamsSize;)
              {
                count = count + 1;
                Index = count + 2;
                ParseCommand(Command.ElementAt( Index -1), TitleOut, ParamOut);
                GetTitleParam(TitleOut, ParamOut, Translate("Name"), Plate);
                PlateList.AddAsLast(Plate);
                GetTitleParam(TitleOut, ParamOut, Translate("LabwareSequence"), LabwareSequence);
                LabwareSequenceList.AddAsLast(LabwareSequence);
                GetTitleParam(TitleOut, ParamOut, Translate("LidSequence"), LidSequence);
                LidSequenceList.AddAsLast(LidSequence);
                GetTitleParam(TitleOut, ParamOut, Translate("LoadingLocation"), LoadingLocation);
                LoadingPositionList.AddAsLast(LoadingLocation);
                GetTitleParam(TitleOut, ParamOut, Translate("Volume"), Volume);
                Volume = StrIVal(Volume);
                VolumeList.AddAsLast(Volume);
                GetTitleParam(TitleOut, ParamOut, Translate("LabwareType"), LabwareType);
                LabwareTypeList.AddAsLast(LabwareType);
                GetTitleParam(TitleOut, ParamOut, Translate("LabwareCategory"), LabwareCategory);
                LabwareCategoryList.AddAsLast(LabwareCategory);
                GetTitleParam(TitleOut, ParamOut, Translate("LabwareName"), LabwareName);
                LabwareNameList.AddAsLast(LabwareName);
              }
            }
            Util2::Debug::TraceArray(Translate(""), PlateList);
            Util2::Debug::TraceArray(Translate(""), LabwareSequenceList);
            Util2::Debug::TraceArray(Translate(""), LidSequenceList);
            Util2::Debug::TraceArray(Translate(""), LoadingPositionList);
            Util2::Debug::TraceArray(Translate(""), VolumeList);
            Util2::Debug::TraceArray(Translate(""), LabwareTypeList);
            Util2::Debug::TraceArray(Translate(""), LabwareCategoryList);
            Util2::Debug::TraceArray(Translate(""), LabwareNameList);
            NumLabware=PlateList.GetSize();
            LabwareArray = HSLExtensions::Array2D::Create(NumLabware, 8);
            HSLExtensions::Array2D::SetRow(LabwareArray, PlateList, PlateListIndex);
            HSLExtensions::Array2D::SetRow(LabwareArray, LabwareSequenceList, LabwareSequenceListIndex);
            HSLExtensions::Array2D::SetRow(LabwareArray, LidSequenceList, LidSequenceListIndex);
            HSLExtensions::Array2D::SetRow(LabwareArray, LoadingPositionList, LoadingPositionListIndex);
            HSLExtensions::Array2D::SetRow(LabwareArray, VolumeList, VolumeListIndex);
            HSLExtensions::Array2D::SetRow(LabwareArray, LabwareTypeList, LabwareTypeListIndex);
            HSLExtensions::Array2D::SetRow(LabwareArray, LabwareCategoryList, LabwareCategoryListIndex);
            HSLExtensions::Array2D::SetRow(LabwareArray, LabwareNameList, LabwareNameListIndex);
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Samples")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("SampleNumber"), _SampleNumber);
            _SampleNumber = StrIVal(_SampleNumber);
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Pipette")
          {
            TrcTrace(Translate("Pipette PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_PipetteUsedIndex-1, Translate("True"));
            {
              for(count = 0; count < ParamsSize;)
              {
                count = count + 1;
                Index = count + 2;
                ParseCommand(Command.ElementAt( Index -1), TitleOut, ParamOut);
                GetTitleParam(TitleOut, ParamOut, Translate("Volume"), Volume);
                Volume = StrFVal(Volume);
                if (Volume <= 50)
                {
                  _Pipette_UsedTips[ _Pipette_NTR50Index -1] = _Pipette_UsedTips.ElementAt( _Pipette_NTR50Index -1) + 1;
                }
                else
                {
                  if (Volume <= 300)
                  {
                    _Pipette_UsedTips[ _Pipette_NTR300Index -1] = _Pipette_UsedTips.ElementAt( _Pipette_NTR300Index -1) + 1;
                  }
                  else
                  {
                    if (Volume <= 1000)
                    {
                      _Pipette_UsedTips[ _Pipette_FTR1000Index -1] = _Pipette_UsedTips.ElementAt( _Pipette_FTR1000Index -1) + 1;
                    }
                    else
                    {
                      Temp = Volume / (1000 * 1.0);
                      Temp = StrFStr(Temp);
                      Temp = StrIVal(Temp);
                      Temp = Temp + 1;
                      _Pipette_UsedTips[ _Pipette_FTR1000Index -1] = _Pipette_UsedTips.ElementAt( _Pipette_FTR1000Index -1) + Temp;
                    }
                  }
                }
              }
            }
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Notify")
          {
            TrcTrace(Translate("Notify PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_NotifyUsedIndex-1, Translate("True"));
            PFIZERTOOLSVCURRENT::GetContacts();
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "StatusUpdate")
          {
            TrcTrace(Translate("StatusUpdate PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_StatusUpdateUsedIndex-1, Translate("True"));
            AswStatusDialog::Initialize(Translate("Visual Method Editor Status Updates"));
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Desalt")
          {
            TrcTrace(Translate("Desalt PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_DesaltUsedIndex-1, Translate("True"));
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            customDialog_5.InitCustomDialog("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");
            customDialog_5.ShowCustomDialog();
            _Desalt_TipType = customDialog_5.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            PlateList = HSLExtensions::Array2D::GetRow(LabwareArray, PlateListIndex);
            PlateSequenceList = HSLExtensions::Array2D::GetRow(LabwareArray, LabwareSequenceListIndex);
            GetTitleParam(TitleOut, ParamOut, Translate("Tips"), Tips);
            Tips = StrIVal(Tips);
            GetTitleParam(TitleOut, ParamOut, Translate("Types"), TypeString);
            ParseCSList(TypeString, Types);
            GetTitleParam(TitleOut, ParamOut, Translate("Volumes"), VolumeString);
            ParseCSList(VolumeString, Volumes);
            GetTitleParam(TitleOut, ParamOut, Translate("Source"), SourceString);
            GetTitleParam(PlateList, PlateSequenceList, SourceString, SourceString);
            DevGetSequenceRef(ML_STAR, SourceString, _Desalt_Source);
            GetTitleParam(TitleOut, ParamOut, Translate("Buffer"), BufferString);
            GetTitleParam(PlateList, PlateSequenceList, BufferString, BufferString);
            DevGetSequenceRef(ML_STAR, BufferString, _Desalt_Buffer);
            GetTitleParam(TitleOut, ParamOut, Translate("Destination"), DestinationString);
            GetTitleParam(PlateList, PlateSequenceList, DestinationString, DestinationString);
            DevGetSequenceRef(ML_STAR, DestinationString, _Desalt_Destination);
            GetTitleParam(TitleOut, ParamOut, Translate("Waste"), WasteString);
            GetTitleParam(PlateList, PlateSequenceList, WasteString, WasteString);
            DevGetSequenceRef(ML_STAR, WasteString, _Desalt_Waste);
            _Desalt_Sets=Types.GetSize();
            _Desalt_LoadingArray = HSLExtensions::Array2D::Create(_Desalt_Sets, 2);
            HSLExtensions::Array2D::SetRow(_Desalt_LoadingArray, Types, 1);
            HSLExtensions::Array2D::SetRow(_Desalt_LoadingArray, Volumes, 2);
            if (_Desalt_TipType == 1)
            {
              _Pipette_UsedTips[ _Pipette_FTR300SlimIndex -1] = Tips;
            }
            else
            {
              _Pipette_UsedTips[ _Pipette_NTR300Index -1] = _Pipette_UsedTips.ElementAt( _Pipette_NTR300Index -1) + Tips;
            }
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Vacuum")
          {
            TrcTrace(Translate("Vacuum PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_VacuumUsedIndex-1, Translate("True"));
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("ID"), _Vacuum_PumpComPort);
            _Vacuum_PumpComPort = StrIVal(_Vacuum_PumpComPort);
            GetTitleParam(TitleOut, ParamOut, Translate("Plate"), _Vacuum_Plate);
            HSLStarBVSLib::BVSInitialize(_Vacuum_PumpID, _Vacuum_PumpComPort);
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Heater")
          {
            TrcTrace(Translate("Heater PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_HeaterUsedIndex-1, Translate("True"));
            ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
            ParamsSize=Command.GetSize();
            NumHeaters = ParamsSize - 2;
            {
              for(count = 0; count < NumHeaters;)
              {
                count = count + 1;
                Index = count + 2;
                ParseCommand(Command.ElementAt( Index -1), TitleOut, ParamOut);
                Util2::Debug::TraceArray(Translate(""), ParamOut);
                GetTitleParam(TitleOut, ParamOut, Translate("ID"), HeaterID);
                GetTitleParam(TitleOut, ParamOut, Translate("Type"), HeaterType);
                _Array_HeaterID.AddAsLast(HeaterID);
                _Array_HeaterType.AddAsLast(HeaterType);
                if (HeaterType == "HeaterShaker")
                {
                  HeaterID = StrIVal(HeaterID);
                  HSLHamHeaterShaker::CreateUsbDevice(HeaterID, Handle);
                  _Array_HeaterHandle.AddAsLast(Handle);
                }
                if (HeaterType == "HeaterCooler")
                {
                  HamiltonHeaterCooler::Connect(HeaterID, 0, 0, _Array_Handle);
                  _Array_HeaterHandle.AddAsLast(_Array_Handle.ElementAt( 1 -1));
                }
              }
            }
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Transport")
          {
            TrcTrace(Translate("Transport PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_TransportUsedIndex-1, Translate("True"));
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Timer")
          {
            TrcTrace(Translate("Timer PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_TimerUsedIndex-1, Translate("True"));
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Log")
          {
            TrcTrace(Translate("Log PreRun"), Translate(""));
            _PreRun_IsUsed.SetAt(_PreRun_LogUsedIndex-1, Translate("True"));
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Title"), TitleString);
            GetTitleParam(TitleOut, ParamOut, Translate("Coordinates"), CoordinateString);
            _Log_Text = StrConcat12(Translate("There is a RunLog present. This following step is the latest step that was logged for the system. Please choose how you would like to proceed from the dropdown."), Translate("\n\nNOTE: Be sure to confirm step selection in the Hamilton log if required.\n\n"), Translate("Step Found:\n"), TitleString, Translate("\n"), CoordinateString, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            customDialog_4.InitCustomDialog("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");
            customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _Log_Options );
            customDialog_4.SetCustomDialogProperty( "textBlock1.Text", _Log_Text );
            customDialog_4.ShowCustomDialog();
            _Log_Selection = customDialog_4.GetCustomDialogProperty( "comboBox1.Text" );
            customDialog_3.InitCustomDialog("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");
            customDialog_3.ShowCustomDialog();
            WriteResponse(_Log_Selection);
          }
        }
      }
    }
    FinishRun();
    MECC::TraceComment(Translate("##################################\n######### End Pre Run and Init ##########\n##################################"));
    NumTipsNTR50 = _Pipette_UsedTips.ElementAt( _Pipette_NTR50Index -1);
    NumTipsNTR300 = _Pipette_UsedTips.ElementAt( _Pipette_NTR300Index -1);
    NumTipsFTR1000 = _Pipette_UsedTips.ElementAt( _Pipette_FTR1000Index -1);
    NumTipsFTR300Slim = _Pipette_UsedTips.ElementAt( _Pipette_FTR300SlimIndex -1);
    Util2::Debug::TraceArray(Translate(""), _Pipette_UsedTips);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "Tip50.Text", NumTipsNTR50 );
    customDialog_1.SetCustomDialogProperty( "Tip300.Text", NumTipsNTR300 );
    customDialog_1.SetCustomDialogProperty( "Slim300.Text", NumTipsFTR1000 );
    customDialog_1.SetCustomDialogProperty( "SizeX.Text", NumTipsFTR300Slim );
    customDialog_1.ShowCustomDialog();
    DECKLOADINGVCURRENT::DoDeckLoading(LabwareArray, _PreRun_IsUsed, _Pipette_UsedTips, _Desalt_LoadingArray, _Vacuum_Plate);
    ChooseTips(_Pipette_UsedTips.ElementAt( _Pipette_NTR50Index -1), _Pipette_UsedTips.ElementAt( _Pipette_NTR300Index -1), _Pipette_UsedTips.ElementAt( _Pipette_FTR300SlimIndex -1), _Pipette_UsedTips.ElementAt( _Pipette_FTR1000Index -1), Tip50Counter, Tip300Counter, Tip300SlimCounter, Tip1000Counter, wasteNTR, waste300NTR);
    _SampleStartPosition = -1;
    {
      loopCounter5 = 0;
      while (_SampleStartPosition == -1)
      {
        loopCounter5 = loopCounter5 + 1;
        customDialog_2.InitCustomDialog("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");
        customDialog_2.ShowCustomDialog();
        ParseAlpha = customDialog_2.GetCustomDialogProperty( "textBox1.Text" );
        ParseNumeric = customDialog_2.GetCustomDialogProperty( "textBox2.Text" );
        _SampleStartPosition = PFIZERTOOLSVCURRENT::_96WellAlphanumericToNumeric(ParseAlpha, ParseNumeric);
      }
    }
    _SampleEndPosition = _SampleStartPosition + _SampleNumber;
    _SampleEndPosition = _SampleEndPosition - 1;
    Trace("Start Position : ", _SampleStartPosition);
    Trace("End Position : ", _SampleEndPosition);
    Trace("Sample Number : ", _SampleNumber);
    if (_PreRun_IsUsed.ElementAt( _PreRun_DesaltUsedIndex -1) == "True")
    {
      if (_Desalt_TipType == 1)
      {
        PFIZERDESALTINGVCURRENT::IMCS_Init(_Desalt_Buffer, _Desalt_Waste, _Desalt_Destination, ML_STAR.Carrier32_Pos5_IMCSTipsRack_96CoreHead, ML_STAR.Carrier26_Pos5_IMCSTipsRack_96CoreHead, ML_STAR.Carrier32_Pos5_IMCSTipsSample_96CoreHead, ML_STAR.Carrier26_Pos5_IMCSTipsSample_96CoreHead, ML_STAR.MAM_Slim300_Tips, ML_STAR.Carrier32_Pos1_TipSupportRack_1mLChannel, ML_STAR.Carrier32_Pos1_TipSupportRack_300Slim_96CoreHead, ML_STAR.Carrier32_Pos1_TipSupportRack_96CoreHead_ResetSequence, _Desalt_Sets, 0, _SampleStartPosition, _SampleEndPosition, Translate("SLIM"), Tip300Counter, waste300NTR, ML_STAR.seq_COREGripTool, ML_STAR.Tip300_NTR_Waste);
      }
      else
      {
        PFIZERDESALTINGVCURRENT::IMCS_Init(_Desalt_Buffer, _Desalt_Waste, _Desalt_Destination, ML_STAR.Carrier32_Pos5_IMCSTipsRack_96CoreHead, ML_STAR.Carrier26_Pos5_IMCSTipsRack_96CoreHead, ML_STAR.Carrier32_Pos5_IMCSTipsSample_96CoreHead, ML_STAR.Carrier26_Pos5_IMCSTipsSample_96CoreHead, ML_STAR.seq_Tips_NTR_300ul, ML_STAR.Carrier32_Pos1_TipSupportRack_1mLChannel, ML_STAR.Carrier32_Pos1_TipSupportRack_300Standard_96CoreHead, ML_STAR.Carrier32_Pos1_TipSupportRack_96CoreHead_ResetSequence, _Desalt_Sets, 0, _SampleStartPosition, _SampleEndPosition, Translate("NTR"), Tip300Counter, waste300NTR, ML_STAR.seq_COREGripTool, ML_STAR.Tip300_NTR_Waste);
      }
      PFIZERDESALTINGVCURRENT::IMCS_Print();
    }
    StartSystem();
    RunMakerScript(Out, _SampleStartPosition, Translate("Run"));
    {
      loopCounter4 = 0;
      while ("" == "")
      {
        loopCounter4 = loopCounter4 + 1;
        GetCommand(Command);
        Util2::Debug::TraceArray(Translate(""), Command);
        if (Command.ElementAt( 1 -1) == "END")
        {
          break;
        }
        ParseCommand(Command.ElementAt( 1 -1), TitleOut, ParamOut);
        if (TitleOut.ElementAt( 1 -1) == "Pipette")
        {
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "Transfer")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Destination"), DestinationString);
            GetTitleParam(TitleOut, ParamOut, Translate("DestinationPosition"), DestinationPositionString);
            GetTitleParam(TitleOut, ParamOut, Translate("Source"), SourceString);
            GetTitleParam(TitleOut, ParamOut, Translate("SourcePosition"), SourcePositionString);
            GetTitleParam(TitleOut, ParamOut, Translate("TransferVolume"), TransferVolumeString);
            GetTitleParam(TitleOut, ParamOut, Translate("PreDestinationHeight"), PreDestinationHeightString);
            GetTitleParam(TitleOut, ParamOut, Translate("PostDestinationHeight"), PostDestinationHeightString);
            GetTitleParam(TitleOut, ParamOut, Translate("Total"), TotalString);
            GetTitleParam(TitleOut, ParamOut, Translate("Mix"), MixString);
            ParseCSList(DestinationString, DestinationList);
            ParseCSList(DestinationPositionString, DestinationPositionList);
            ParseCSList(SourceString, SourceList);
            ParseCSList(SourcePositionString, SourcePositionList);
            ParseCSList(TransferVolumeString, TransferVolumeList);
            ParseCSList(PreDestinationHeightString, PreDestinationHeightList);
            ParseCSList(PostDestinationHeightString, PostDestinationHeightList);
            ParseCSList(TotalString, TotalList);
            ParseCSList(MixString, MixList);
            NumTransfers=DestinationList.GetSize();
            TrcTrace(Translate("Num Transfers: "), NumTransfers);
            SeqRemoveAll(DispenseSequence5);
            SeqRemoveAll(DispenseSequence50);
            SeqRemoveAll(DispenseSequence300);
            SeqRemoveAll(DispenseSequence1000);
            SeqRemoveAll(AspirateSequence5);
            SeqRemoveAll(AspirateSequence50);
            SeqRemoveAll(AspirateSequence300);
            SeqRemoveAll(AspirateSequence1000);
            LidSequenceList.SetSize(0);
            Mix5.SetSize(0);
            Mix50.SetSize(0);
            Mix300.SetSize(0);
            Mix1000.SetSize(0);
            MixVolume5.SetSize(0);
            MixVolume50.SetSize(0);
            MixVolume300.SetSize(0);
            MixVolume1000.SetSize(0);
            cLLD5.SetSize(0);
            cLLD50.SetSize(0);
            cLLD300.SetSize(0);
            cLLD1000.SetSize(0);
            FixedHeight5.SetSize(0);
            FixedHeight50.SetSize(0);
            FixedHeight300.SetSize(0);
            FixedHeight1000.SetSize(0);
            LiquidFollowing5.SetSize(0);
            LiquidFollowing50.SetSize(0);
            LiquidFollowing300.SetSize(0);
            LiquidFollowing1000.SetSize(0);
            TransferVolume5.SetSize(0);
            TransferVolume50.SetSize(0);
            TransferVolume300.SetSize(0);
            TransferVolume1000.SetSize(0);
            DispenseHeight5.SetSize(0);
            DispenseHeight50.SetSize(0);
            DispenseHeight300.SetSize(0);
            DispenseHeight1000.SetSize(0);
            {
              for(Counter = 0; Counter < NumTransfers;)
              {
                Counter = Counter + 1;
                DispenseHeight = StrFVal(PreDestinationHeightList.ElementAt( Counter -1));
                TransferVolume = StrFVal(TransferVolumeList.ElementAt( Counter -1));
                TotalVolume = StrFVal(TotalList.ElementAt( Counter -1));
                MixVolume = TransferVolume + TotalVolume;
                SequenceArray = HSLExtensions::Array2D::GetRow(LabwareArray, LabwareSequenceListIndex);
                CategoryArray = HSLExtensions::Array2D::GetRow(LabwareArray, LabwareCategoryListIndex);
                LidArray = HSLExtensions::Array2D::GetRow(LabwareArray, LidSequenceListIndex);
                GetTitleParam(SequenceArray, CategoryArray, SourceList.ElementAt( Counter -1), Type);
                GetTitleParam(SequenceArray, LidArray, SourceList.ElementAt( Counter -1), Lid);
                if (Type == "Plate")
                {
                  cLLD = 0;
                  FixedHeight = 0.75;
                  LiquidFollowing = 0;
                }
                else
                {
                  if (Lid != "False")
                  {
                    IsPresent = ArrayIsItemPresent(LidSequenceList, SourceList.ElementAt( Counter -1));
                    if (IsPresent == 0)
                    {
                      LidSequenceList.AddAsLast(SourceList.ElementAt( Counter -1));
                    }
                  }
                  cLLD = 1;
                  FixedHeight = 0;
                  LiquidFollowing = 1;
                }
                if (MixList.ElementAt( Counter -1) == "Yes")
                {
                  Mix = 10;
                }
                else
                {
                  Mix = 0;
                }
                DevGetSequenceRef(ML_STAR, DestinationList.ElementAt( Counter -1), DispenseSequence);
                DispensePosition = StrIVal(DestinationPositionList.ElementAt( Counter -1));
                DispenseSequence.SetCount(DispensePosition);
                DispenseSequence.SetCurrentPosition(DispensePosition);
                DispenseLabID = SeqGetLabwareId(DispenseSequence);
                DispensePosID = SeqGetPositionId(DispenseSequence);
                DevGetSequenceRef(ML_STAR, SourceList.ElementAt( Counter -1), AspirateSequence);
                AspiratePosition = StrIVal(SourcePositionList.ElementAt( Counter -1));
                if (Type != "Plate")
                {
                  AspiratePosition = AspiratePosition % 8;
                  if (AspiratePosition == 0)
                  {
                    AspiratePosition = 8;
                  }
                }
                AspirateSequence.SetCount(AspiratePosition);
                AspirateSequence.SetCurrentPosition(AspiratePosition);
                AspirateLabID = SeqGetLabwareId(AspirateSequence);
                AspiratePosID = SeqGetPositionId(AspirateSequence);
                if (TransferVolume <= 5)
                {
                  SeqAdd(DispenseSequence5, DispenseLabID, DispensePosID);
                  SeqAdd(AspirateSequence5, AspirateLabID, AspiratePosID);
                  cLLD5.AddAsLast(cLLD);
                  FixedHeight5.AddAsLast(FixedHeight);
                  DispenseHeight5.AddAsLast(DispenseHeight);
                  LiquidFollowing5.AddAsLast(LiquidFollowing);
                  TransferVolume5.AddAsLast(TransferVolume);
                  if (MixVolume > 66)
                  {
                    MixVolume = 50;
                  }
                  else
                  {
                    MixVolume = MixVolume * 0.75;
                  }
                  MixVolume5.AddAsLast(MixVolume);
                  Mix5.AddAsLast(Mix);
                }
                else
                {
                  if (TransferVolume <= 50)
                  {
                    SeqAdd(DispenseSequence50, DispenseLabID, DispensePosID);
                    SeqAdd(AspirateSequence50, AspirateLabID, AspiratePosID);
                    cLLD50.AddAsLast(cLLD);
                    FixedHeight50.AddAsLast(FixedHeight);
                    DispenseHeight50.AddAsLast(DispenseHeight);
                    LiquidFollowing50.AddAsLast(LiquidFollowing);
                    TransferVolume50.AddAsLast(TransferVolume);
                    if (MixVolume > 66)
                    {
                      MixVolume = 50;
                    }
                    else
                    {
                      MixVolume = MixVolume * 0.75;
                    }
                    MixVolume50.AddAsLast(MixVolume);
                    Mix50.AddAsLast(Mix);
                  }
                  else
                  {
                    if (TransferVolume <= 300)
                    {
                      SeqAdd(DispenseSequence300, DispenseLabID, DispensePosID);
                      SeqAdd(AspirateSequence300, AspirateLabID, AspiratePosID);
                      cLLD300.AddAsLast(cLLD);
                      FixedHeight300.AddAsLast(FixedHeight);
                      DispenseHeight300.AddAsLast(DispenseHeight);
                      LiquidFollowing300.AddAsLast(LiquidFollowing);
                      TransferVolume300.AddAsLast(TransferVolume);
                      if (MixVolume > 395)
                      {
                        MixVolume = 300;
                      }
                      else
                      {
                        MixVolume = MixVolume * 0.75;
                      }
                      MixVolume300.AddAsLast(MixVolume);
                      Mix300.AddAsLast(Mix);
                    }
                    else
                    {
                      if (TransferVolume <= 1000)
                      {
                        SeqAdd(DispenseSequence1000, DispenseLabID, DispensePosID);
                        SeqAdd(AspirateSequence1000, AspirateLabID, AspiratePosID);
                        cLLD1000.AddAsLast(cLLD);
                        FixedHeight1000.AddAsLast(FixedHeight);
                        DispenseHeight1000.AddAsLast(DispenseHeight);
                        LiquidFollowing1000.AddAsLast(LiquidFollowing);
                        TransferVolume1000.AddAsLast(TransferVolume);
                        if (MixVolume > 1333)
                        {
                        MixVolume = 1000;
                        }
                        else
                        {
                        MixVolume = MixVolume * 0.75;
                        }
                        MixVolume1000.AddAsLast(MixVolume);
                        Mix1000.AddAsLast(Mix);
                      }
                      else
                      {
                        TransfersRequired = TransferVolume / (1000 * 1.0);
                        TransfersRequired = StrFStr(TransfersRequired);
                        TransfersRequired = StrIVal(TransfersRequired);
                        TransfersRequired = TransfersRequired + 1;
                        TransferVolume = TransferVolume / (TransfersRequired * 1.0);
                        MixVolume = 0 + TotalVolume;
                        PreDispenseHeight = StrFVal(PreDestinationHeightList.ElementAt( Counter -1));
                        PostDispenseHeight = StrFVal(PostDestinationHeightList.ElementAt( Counter -1));
                        DispenseHeightDifference = PostDispenseHeight - PreDispenseHeight;
                        DispenseHeightStep = DispenseHeightDifference / (TransfersRequired * 1.0);
                        {
                        for(loopCounter3 = 0; loopCounter3 < TransfersRequired;)
                        {
                        loopCounter3 = loopCounter3 + 1;
                        SeqAdd(DispenseSequence1000, DispenseLabID, DispensePosID);
                        SeqAdd(AspirateSequence1000, AspirateLabID, AspiratePosID);
                        cLLD1000.AddAsLast(cLLD);
                        FixedHeight1000.AddAsLast(FixedHeight);
                        DispenseHeight1000.AddAsLast(DispenseHeight);
                        DispenseHeight = DispenseHeight + DispenseHeightStep;
                        LiquidFollowing1000.AddAsLast(LiquidFollowing);
                        TransferVolume1000.AddAsLast(TransferVolume);
                        MixVolume = TransferVolume + MixVolume;
                        if (MixVolume > 1333)
                        {
                        MixVolume = 1000;
                        }
                        else
                        {
                        MixVolume = MixVolume * 0.75;
                        }
                        MixVolume1000.AddAsLast(MixVolume);
                        Mix1000.AddAsLast(Mix);
                        }
                        }
                      }
                    }
                  }
                }
              }
            }
            NumLids=LidSequenceList.GetSize();
            if (NumLids != 0)
            {
              FLIPTUBETOOL::ToolsPickUp(Translate("10000000"), ML_STAR.Ham_4_FlipTubeTools_OnWaste_0001);
              {
                for(Counter = 0; Counter < NumLids;)
                {
                  Counter = Counter + 1;
                  DevGetSequenceRef(ML_STAR, LidSequenceList.ElementAt( Counter -1), Seq);
                  Flip_Tube_Functions(2, ML_STAR.Ham_4_FlipTubeTools_OnWaste_0001, Seq, Translate("10000000"), 0, 0);
                }
              }
              FLIPTUBETOOL::ToolsEject(ML_STAR.Ham_4_FlipTubeTools_OnWaste_0001);
            }
            SequenceSize = SeqGetTotal(DispenseSequence5);
            PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence5, 1, SequenceSize);
            PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence5, 1, SequenceSize);
            {
              loopCounter11 = 0;
              while (
                 (DispenseSequence5.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, AspirateSequence5, 1, DispenseSequence5, 1, ML_STAR.seq_Tips_NTR_50ul, 1);
                loopCounter11 = loopCounter11 + 1;
                Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence5);
                VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.seq_Tips_NTR_50ul, Tip50Counter, wasteNTR, ML_STAR.seq_COREGripTool, 1, 1, 0, ML_STAR.Tip50_NTR_Waste, 0, 8, 0, 1, Translate("Please Reload 50 NTR Tips"), 0);
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (
                   (DispenseSequence5.GetCurrentPosition() > 0 && DispenseSequence5.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              AspirateSequence5.SetMax(AspirateSequence5.GetTotal());
              DispenseSequence5.SetMax(DispenseSequence5.GetTotal());
              ML_STAR.seq_Tips_NTR_50ul.SetMax(ML_STAR.seq_Tips_NTR_50ul.GetTotal());
              AspirateSequence5.SetCurrentPosition(1);
              DispenseSequence5.SetCurrentPosition(1);
            }
            SequenceSize = SeqGetTotal(DispenseSequence50);
            PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence50, 1, SequenceSize);
            PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence50, 1, SequenceSize);
            {
              loopCounter11 = 0;
              while (
                 (DispenseSequence50.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, AspirateSequence50, 1, DispenseSequence50, 1, ML_STAR.seq_Tips_NTR_50ul, 1);
                loopCounter11 = loopCounter11 + 1;
                Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence50);
                VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.seq_Tips_NTR_50ul, Tip50Counter, wasteNTR, ML_STAR.seq_COREGripTool, 1, 1, 0, ML_STAR.Tip50_NTR_Waste, 0, 8, 0, 1, Translate("Please Reload 50 NTR Tips"), 0);
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (
                   (DispenseSequence50.GetCurrentPosition() > 0 && DispenseSequence50.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              AspirateSequence50.SetMax(AspirateSequence50.GetTotal());
              DispenseSequence50.SetMax(DispenseSequence50.GetTotal());
              ML_STAR.seq_Tips_NTR_50ul.SetMax(ML_STAR.seq_Tips_NTR_50ul.GetTotal());
              AspirateSequence50.SetCurrentPosition(1);
              DispenseSequence50.SetCurrentPosition(1);
            }
            SequenceSize = SeqGetTotal(DispenseSequence300);
            PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence300, 1, SequenceSize);
            PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence300, 1, SequenceSize);
            {
              loopCounter11 = 0;
              while (
                 (DispenseSequence300.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, AspirateSequence300, 1, DispenseSequence300, 1, ML_STAR.seq_Tips_NTR_300ul, 1);
                loopCounter11 = loopCounter11 + 1;
                Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence300);
                VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.seq_Tips_NTR_300ul, Tip300Counter, waste300NTR, ML_STAR.seq_COREGripTool, 1, 1, 0, ML_STAR.Tip300_NTR_Waste, 0, 8, 0, 1, Translate("Please Reload 300 NTR Tips"), 0);
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (
                   (DispenseSequence300.GetCurrentPosition() > 0 && DispenseSequence300.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              AspirateSequence300.SetMax(AspirateSequence300.GetTotal());
              DispenseSequence300.SetMax(DispenseSequence300.GetTotal());
              ML_STAR.seq_Tips_NTR_300ul.SetMax(ML_STAR.seq_Tips_NTR_300ul.GetTotal());
              AspirateSequence300.SetCurrentPosition(1);
              DispenseSequence300.SetCurrentPosition(1);
            }
            SequenceSize = SeqGetTotal(DispenseSequence1000);
            PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence1000, 1, SequenceSize);
            PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence1000, 1, SequenceSize);
            {
              loopCounter11 = 0;
              while (
                 (DispenseSequence1000.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, AspirateSequence1000, 1, DispenseSequence1000, 1, ML_STAR.seq_Tips_FTR_1000ul, 1);
                loopCounter11 = loopCounter11 + 1;
                Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence1000);
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (
                   (DispenseSequence1000.GetCurrentPosition() > 0 && DispenseSequence1000.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              AspirateSequence1000.SetMax(AspirateSequence1000.GetTotal());
              DispenseSequence1000.SetMax(DispenseSequence1000.GetTotal());
              ML_STAR.seq_Tips_FTR_1000ul.SetMax(ML_STAR.seq_Tips_FTR_1000ul.GetTotal());
              AspirateSequence1000.SetCurrentPosition(1);
              DispenseSequence1000.SetCurrentPosition(1);
            }
            NumLids=LidSequenceList.GetSize();
            if (NumLids != 0)
            {
              FLIPTUBETOOL::ToolsPickUp(Translate("10000000"), ML_STAR.Ham_4_FlipTubeTools_OnWaste_0001);
              PositionArray = HSLExtensions::Array2D::GetRow(LabwareArray, LoadingPositionListIndex);
              SequenceArray = HSLExtensions::Array2D::GetRow(LabwareArray, LabwareSequenceListIndex);
              {
                for(Counter = 0; Counter < NumLids;)
                {
                  Counter = Counter + 1;
                  GetTitleParam(SequenceArray, PositionArray, LidSequenceList.ElementAt( Counter -1), Position);
                  Storage = StrFind(Position, Translate("E"));
                  DevGetSequenceRef(ML_STAR, LidSequenceList.ElementAt( Counter -1), Seq);
                  if (Storage == -1)
                  {
                    Flip_Tube_Functions(3, ML_STAR.Ham_4_FlipTubeTools_OnWaste_0001, Seq, Translate("10000000"), 0, 0);
                  }
                  else
                  {
                    Flip_Tube_Functions(4, ML_STAR.Ham_4_FlipTubeTools_OnWaste_0001, Seq, Translate("10000000"), 0, 0);
                  }
                }
              }
              FLIPTUBETOOL::ToolsEject(ML_STAR.Ham_4_FlipTubeTools_OnWaste_0001);
            }
            WriteResponse(Translate("Sucess!"));
          }
          if (TitleOut.ElementAt( 1 -1) == "Correct")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Destination"), DestinationString);
            GetTitleParam(TitleOut, ParamOut, Translate("DestinationPosition"), DestinationPositionString);
            GetTitleParam(TitleOut, ParamOut, Translate("Total"), TotalString);
            ParseCSList(DestinationString, DestinationList);
            ParseCSList(DestinationPositionString, DestinationPositionList);
            ParseCSList(TotalString, TotalList);
            WriteResponse(Translate("Sucess!"));
          }
        }
        if (TitleOut.ElementAt( 1 -1) == "Notify")
        {
          TrcTrace(Translate("Notify Command"), Translate(""));
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "SendMessage")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Wait"), Wait);
            GetTitleParam(TitleOut, ParamOut, Translate("Subject"), Subject);
            GetTitleParam(TitleOut, ParamOut, Translate("Message"), Message);
            PFIZERTOOLSVCURRENT::NotifyContacts(Subject, Message);
            if (Wait == "Yes")
            {
              DialogOut = 6;
              {
                loopCounter2 = 0;
                while (DialogOut == 6)
                {
                  loopCounter2 = loopCounter2 + 1;
                  customDialog_6.InitCustomDialog("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");
                  customDialog_6.SetCustomDialogProperty( "Title", Subject );
                  customDialog_6.SetCustomDialogProperty( "textBlock1.Text", Message );
                  customDialog_6.ShowCustomDialog();
                  DialogOut = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
                  if (DialogOut == 6)
                  {
                    DECKLOADINGVCURRENT::DoDeckLoading(LabwareArray, _PreRun_IsUsed, _Pipette_UsedTips, _Desalt_LoadingArray, _Vacuum_Plate);
                  }
                }
              }
            }
          }
          WriteResponse(Translate("Sucess!"));
        }
        if (TitleOut.ElementAt( 1 -1) == "StatusUpdate")
        {
          TrcTrace(Translate("StatusUpdate Command"), Translate(""));
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "AppendText")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Message"), _STATUS_UPDATE);
            AswStatusDialog::AppendText(_STATUS_UPDATE);
            WriteResponse(Translate("Sucess!"));
          }
        }
        if (TitleOut.ElementAt( 1 -1) == "Desalt")
        {
          TrcTrace(Translate("Desalt Command"), Translate(""));
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "Equilibrate")
          {
            if (_Desalt_TipType == 1)
            {
              PFIZERDESALTINGVCURRENT::IMCSTips_Equl(ML_STAR, ML_STAR.MAM_Slim300_Tips);
            }
            else
            {
              PFIZERDESALTINGVCURRENT::IMCSTips_Equl(ML_STAR, ML_STAR.seq_Tips_NTR_300ul);
            }
          }
          if (TitleOut.ElementAt( 1 -1) == "Process")
          {
            if (_Desalt_TipType == 1)
            {
              PFIZERDESALTINGVCURRENT::IMCSTips_Process(ML_STAR, ML_STAR.MAM_Slim300_Tips, _Desalt_Source);
            }
            else
            {
              PFIZERDESALTINGVCURRENT::IMCSTips_Process(ML_STAR, ML_STAR.seq_Tips_NTR_300ul, _Desalt_Source);
            }
          }
          WriteResponse(Translate("Sucess!"));
        }
        if (TitleOut.ElementAt( 1 -1) == "Heater")
        {
          TrcTrace(Translate("Heater Command"), Translate(""));
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "Start Heat")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            HeaterIndex = 1;
            {
              for(count = 0; count < NumHeaters;)
              {
                count = count + 1;
                GetTitleParam(TitleOut, ParamOut, Translate("ID"), ID);
                if (_Array_HeaterID.ElementAt( count -1) == ID)
                {
                  HeaterIndex = count;
                  break;
                }
              }
            }
            GetTitleParam(TitleOut, ParamOut, Translate("Temp"), HeaterTemp);
            HeaterTemp = StrFVal(HeaterTemp);
            if (_Array_HeaterType.ElementAt( HeaterIndex -1) == "HeaterShaker")
            {
              HSLHamHeaterShaker::StartTempCtrl(_Array_HeaterHandle.ElementAt( HeaterIndex -1), HeaterTemp, 0);
            }
            if (_Array_HeaterType.ElementAt( HeaterIndex -1) == "HeaterCooler")
            {
              HamiltonHeaterCooler::SetTemperature(_Array_HeaterHandle.ElementAt( HeaterIndex -1), 0, 100, HeaterTemp, 0, 0);
            }
          }
          if (TitleOut.ElementAt( 1 -1) == "Stop Heat")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            HeaterIndex = 1;
            {
              for(count = 0; count < NumHeaters;)
              {
                count = count + 1;
                GetTitleParam(TitleOut, ParamOut, Translate("ID"), ID);
                if (_Array_HeaterID.ElementAt( count -1) == ID)
                {
                  HeaterIndex = count;
                  break;
                }
              }
            }
            if (_Array_HeaterType.ElementAt( HeaterIndex -1) == "HeaterShaker")
            {
              HSLHamHeaterShaker::StopTempCtrl(_Array_HeaterHandle.ElementAt( HeaterIndex -1));
            }
            if (_Array_HeaterType.ElementAt( HeaterIndex -1) == "HeaterCooler")
            {
              HamiltonHeaterCooler::StopTemperatureControl(_Array_HeaterHandle.ElementAt( HeaterIndex -1));
            }
          }
          if (TitleOut.ElementAt( 1 -1) == "Start Shake")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            HeaterIndex = 1;
            {
              for(count = 0; count < NumHeaters;)
              {
                count = count + 1;
                GetTitleParam(TitleOut, ParamOut, Translate("ID"), ID);
                if (_Array_HeaterID.ElementAt( count -1) == ID)
                {
                  HeaterIndex = count;
                  break;
                }
              }
            }
            GetTitleParam(TitleOut, ParamOut, Translate("RPM"), HeaterRPM);
            HeaterRPM = StrIVal(HeaterRPM);
            if (_Array_HeaterType.ElementAt( HeaterIndex -1) == "HeaterShaker")
            {
              HSLHamHeaterShaker::StartShaker(_Array_HeaterHandle.ElementAt( HeaterIndex -1), HeaterRPM);
            }
          }
          if (TitleOut.ElementAt( 1 -1) == "Stop Shake")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            HeaterIndex = 1;
            {
              for(count = 0; count < NumHeaters;)
              {
                count = count + 1;
                GetTitleParam(TitleOut, ParamOut, Translate("ID"), ID);
                if (_Array_HeaterID.ElementAt( count -1) == ID)
                {
                  HeaterIndex = count;
                  break;
                }
              }
            }
            if (_Array_HeaterType.ElementAt( HeaterIndex -1) == "HeaterShaker")
            {
              HSLHamHeaterShaker::StopShaker(_Array_HeaterHandle.ElementAt( HeaterIndex -1));
            }
          }
          WriteResponse(Translate("Sucess!"));
        }
        if (TitleOut.ElementAt( 1 -1) == "Transport")
        {
          TrcTrace(Translate("Transport Command"), Translate(""));
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "Move")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Source"), _Sequence_Source_String);
            DevGetSequenceRef(ML_STAR, _Sequence_Source_String, _Sequence_Source);
            GetTitleParam(TitleOut, ParamOut, Translate("Destination"), _Sequence_Destination_String);
            DevGetSequenceRef(ML_STAR, _Sequence_Destination_String, _Sequence_Destination);
            GetTitleParam(TitleOut, ParamOut, Translate("Open"), OpenWidth);
            OpenWidth = StrFVal(OpenWidth);
            GetTitleParam(TitleOut, ParamOut, Translate("Close"), CloseWidth);
            CloseWidth = StrFVal(CloseWidth);
            GetTitleParam(TitleOut, ParamOut, Translate("Eject"), Eject);
            Eject = StrIVal(Eject);
            GetTitleParam(TitleOut, ParamOut, Translate("Check"), Check);
            Check = StrIVal(Check);
            LabID = SeqGetLabwareId(_Sequence_Destination);
            DevGetLabwarePosition(ML_STAR, LabID, ntrX, ntrY, ntrZ, ntrANGLE);
            ISwap_Moved = 0;
            if (ntrY > 433.8)
            {
              iswapPresent = DevGetCfgValueWithKey(ML_STAR, 36);
              if (iswapPresent != 0)
              {
                ISwap_Moved = 1;
                ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
              }
            }
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            if (ISwap_Moved == 1)
            {
              ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
              ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            }
          }
          WriteResponse(Translate("Sucess!"));
        }
        if (TitleOut.ElementAt( 1 -1) == "Timer")
        {
          TrcTrace(Translate("Timer Command"), Translate(""));
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "Start")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Time"), TimerTime);
            TimerTime = StrFVal(TimerTime);
            if( 0 == _Handle_Timer.SetTimer(TimerTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          if (TitleOut.ElementAt( 1 -1) == "Wait")
          {
            if( 0 == _Handle_Timer.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          WriteResponse(Translate("Sucess!"));
        }
        if (TitleOut.ElementAt( 1 -1) == "Vacuum")
        {
          TrcTrace(Translate("Vacuum Command"), Translate(""));
          ParseCommand(Command.ElementAt( 2 -1), TitleOut, ParamOut);
          if (TitleOut.ElementAt( 1 -1) == "Start")
          {
            ParseCommand(Command.ElementAt( 3 -1), TitleOut, ParamOut);
            GetTitleParam(TitleOut, ParamOut, Translate("Pressure"), VacuumPressure);
            GetTitleParam(TitleOut, ParamOut, Translate("Time"), VacuumTime);
            VacuumTime = StrIVal(VacuumTime);
            VacuumPressure = StrIVal(VacuumPressure);
            HSLStarBVSLib::BVSVacuum(_Vacuum_PumpID, VacuumPressure, VacuumTime, 1, VacuumPressure, Temp);
            if( 0 == VacuumReleaseTimer.SetTimer(5) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == VacuumReleaseTimer.WaitTimer(hslFalse, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          WriteResponse(Translate("Sucess!"));
        }
      }
    }
    FinishRun();
    SaveTips();
    PFIZERTOOLSVCURRENT::_ExitLibrary();
    PFIZERTIPCOUNTERVCURRENT::_ExitLibrary();
    PFIZERDESALTINGVCURRENT::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    DECKLOADINGVCURRENT::_ExitLibrary();
    PIPETTE::_ExitLibrary();
    HEATER::_ExitLibrary();
  } }
