private function ArrayIsItemPresent( variable & Array[], variable Item ) variable ;
private function ChooseMethodFile(  ) variable ;
function ChooseTips( variable _Num_NTR50Tips, variable _Num_NTR300Tips, variable _Num_Slim300Tips, variable _Num_Slim1000Tips, variable & Tip50Counter, variable & Tip300Counter, variable & Tip300SlimCounter, variable & Tip1000Counter, sequence & wasteNTR, sequence & waste300NTR ) void ;
private function DoDeckLoading( variable & LabwareArray[], variable & IsUsedArray[], variable & TipsArray[], variable & DesaltingArray[], variable VacuumPlate ) void ;
private function FinishRun(  ) void ;
private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool ) void ;
private function GetCommand( variable & CommandStringArray[] ) void ;
private function GetTitleParam( variable & TitlesArray[], variable & ParamsArray[], variable InputTitleString, variable & OutputParamString ) void ;
private function ParseCSList( variable CommaSeperatedString, variable & OutputArray[] ) void ;
private function ParseCommand( variable InputCommand, variable & OutputTitleArray[], variable & OutputParameterArray[] ) void ;
private function RunMakerScript( variable Excel_File_Path, variable Start_Pos, variable RunType ) void ;
private function SaveTips(  ) void ;
private function StartSystem(  ) void ;
private function WriteResponse( variable ResponseString ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  AswStandardDialogs::Terminate();
  FinishRun();
  SaveTips();
}

private function RunMakerScript( variable Excel_File_Path, variable Start_Pos, variable RunType ) void {
  private variable Command_Base;
  private event _Temp;
  private variable __Temp;
  TrcTrace(Translate("******************************************************************"), Translate(""));
  TrcTrace(Translate("************ Running Method Maker Script *****************"), Translate(""));
  TrcTrace(Translate("******************************************************************"), Translate(""));
  Command_Base = StrConcat12(Translate("C:\\windows\\system32\\cmd.exe /K "), Translate("\"\""), PythonRootPath, Translate("\\python.exe\" "), Translate(" \""), ScriptRootPath, Translate("\\MethodMaker.py\""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  Command_Base = StrConcat12(Command_Base, Translate(" "), Translate("\""), Excel_File_Path, Translate("\""), Translate(" "), Start_Pos, Translate(" "), RunType, Translate("\""), Translate(""), Translate(""));
  TrcTrace(Command_Base, Translate(""));
  _ = Util::AsyncShell(Command_Base, 2, _Temp, __Temp);
}

private function ChooseMethodFile(  ) variable {
  private variable loopCounter2;
  TrcTrace(Translate("******************************************************************"), Translate(""));
  TrcTrace(Translate("******************* Selecting Method File ********************"), Translate(""));
  TrcTrace(Translate("******************************************************************"), Translate(""));
  AswStandardDialogs::Initialize();
  Out = Translate("");
  {
    loopCounter2 = 0;
    while (Out == "")
    {
      loopCounter2 = loopCounter2 + 1;
      AswStandardDialogs::FileBrowserDialog(Translate("Choose File"), 0, 0, 0, Translate("Please Choose a Method Maker Excel File"), 1, Translate(""), 0, Translate(""), Out);
      if (Out == "")
      {
        AswStandardDialogs::MessageDialog(Translate("Error"), 1, 0, 0, 0, 0, Translate("File not selected... Please select a file from the dialog."));
      }
    }
  }
  return (Out);
}

private function GetCommand( variable & CommandStringArray[] ) void {
  private variable FilePath;
  private file CommandFile;
  private variable File;
  private timer FileWaitTime;
  private variable CommandString;
  private variable loopCounter2;
  CommandStringArray.SetSize( 0);
  if(0){
    TrcTrace(Translate("******************************************************************"), Translate(""));
    TrcTrace(Translate("********************** Get next command ********************"), Translate(""));
    TrcTrace(Translate("******************************************************************"), Translate(""));
  }
  FilePath = StrConcat2(ScriptRootPath, Translate("\\CommunicationFolder\\Command.txt"));
  File = Translate("");
  {
    loopCounter1 = 0;
    while (File == "")
    {
      loopCounter1 = loopCounter1 + 1;
      File = FilSearchPath(FilePath);
    }
  }
  if( 0 == FileWaitTime.SetTimer(0.1) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == FileWaitTime.WaitTimer(hslFalse, hslFalse) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  CommandStringArray.SetSize(0);
  CommandFile.AddField(1, CommandString, hslString);
  CommandFile.SetDelimiter(hslAsciiText);
  if( 0 == CommandFile.Open(FilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, FilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while ("" == "")
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == CommandFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (CommandString == "")
      {
        break;
      }
      CommandStringArray.AddAsLast(CommandString);
    }
  }
  if( 0 != CommandFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  CommandFile.RemoveFields();
  FilDeleteFileEx(FilePath);
}

private function WriteResponse( variable ResponseString ) void {
  private variable FilePath;
  private variable Command_Base;
  private file ResponseFile;
  if(0){
    TrcTrace(Translate("******************************************************************"), Translate(""));
    TrcTrace(Translate("********************** Give Response ************************"), Translate(""));
    TrcTrace(Translate("******************************************************************"), Translate(""));
  }
  FilePath = StrConcat2(ScriptRootPath, Translate("\\CommunicationFolder\\Temp_Response.txt"));
  ResponseFile.AddField(1, ResponseString, hslString);
  ResponseFile.SetDelimiter(hslAsciiText);
  if( 0 == ResponseFile.Open(FilePath, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, FilePath, "HxMetEdCompCmd");
  }
  if( 0 == ResponseFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != ResponseFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ResponseFile.RemoveFields();
  Command_Base = StrConcat12(Translate("C:\\windows\\system32\\cmd.exe /C "), Translate("\"\""), PythonRootPath, Translate("\\python.exe\" "), Translate(" \""), ScriptRootPath, Translate("\\RenameFile.py\""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  Util::SyncShell(Command_Base, 1, code);
}

private function StartSystem(  ) void {
  private variable FilePath;
  private variable File;
  TrcTrace(Translate("******************************************************************"), Translate(""));
  TrcTrace(Translate("********************** Initialize System ************************"), Translate(""));
  TrcTrace(Translate("******************************************************************"), Translate(""));
  FilePath = StrConcat2(ScriptRootPath, Translate("\\CommunicationFolder\\Temp_Command.txt"));
  File = FilSearchPath(FilePath);
  if (File != "")
  {
    FilDeleteFileEx(FilePath);
  }
  FilePath = StrConcat2(ScriptRootPath, Translate("\\CommunicationFolder\\Command.txt"));
  File = FilSearchPath(FilePath);
  if (File != "")
  {
    FilDeleteFileEx(FilePath);
  }
  FilePath = StrConcat2(ScriptRootPath, Translate("\\CommunicationFolder\\Temp_Response.txt"));
  File = FilSearchPath(FilePath);
  if (File != "")
  {
    FilDeleteFileEx(FilePath);
  }
  FilePath = StrConcat2(ScriptRootPath, Translate("\\CommunicationFolder\\Response.txt"));
  File = FilSearchPath(FilePath);
  if (File != "")
  {
    FilDeleteFileEx(FilePath);
  }
}

private function ParseCommand( variable InputCommand, variable & OutputTitleArray[], variable & OutputParameterArray[] ) void {
  private variable TitleLength;
  private variable TitleStart;
  private variable Title;
  private variable TitleEnd;
  private variable loopCounter3;
  private variable Param;
  private variable ParamEnd;
  private variable ParamLength;
  private variable ParamStart;
  private variable StringLength;
  OutputTitleArray.SetSize( 0);
  OutputParameterArray.SetSize( 0);
  if(0){
    TrcTrace(Translate("******************************************************************"), Translate(""));
    TrcTrace(Translate(""), Translate("********************** Parse Command ***********************"));
    TrcTrace(Translate("******************************************************************"), Translate(""));
  }
  OutputParameterArray.SetSize(0);
  OutputTitleArray.SetSize(0);
  StrReplace(InputCommand, Translate("\n"), Translate(""));
  {
    loopCounter3 = 0;
    while ("" == "")
    {
      loopCounter3 = loopCounter3 + 1;
      Temp = 0;
      TitleStart = StrFind(InputCommand, Translate("["));
      TitleEnd = StrFind(InputCommand, Translate("]"));
      TitleLength = TitleEnd - TitleStart;
      TitleLength = TitleLength + 1;
      Title = StrMid(InputCommand, TitleStart, TitleLength);
      StringLength = StrGetLength(InputCommand);
      StringLength = StringLength - TitleLength;
      InputCommand = StrRight(InputCommand, StringLength);
      StrReplace(Title, Translate("["), Translate(""));
      StrReplace(Title, Translate("]"), Translate(""));
      OutputTitleArray.AddAsLast(Title);
      ParamStart = 0;
      ParamEnd = StrFind(InputCommand, Translate("["));
      if (ParamEnd == -1)
      {
        Temp = StrGetLength(InputCommand);
        ParamEnd = Temp;
      }
      ParamLength = ParamEnd - ParamStart;
      Param = StrMid(InputCommand, ParamStart, ParamLength);
      OutputParameterArray.AddAsLast(Param);
      if (ParamEnd == Temp)
      {
        break;
      }
      StringLength = StrGetLength(InputCommand);
      StringLength = StringLength - ParamLength;
      InputCommand = StrRight(InputCommand, StringLength);
    }
  }
}

private function FinishRun(  ) void {
  private variable FilePath;
  private variable File;
  private variable loopCounter3;
  FilePath = StrConcat2(ScriptRootPath, Translate("\\CommunicationFolder\\Command.txt"));
  File = FilSearchPath(FilePath);
  if (File != "")
  {
    GetCommand(Command);
  }
  WriteResponse(Translate("Abort"));
  {
    loopCounter3 = 0;
    while (Command.ElementAt( 1 -1) != "END")
    {
      loopCounter3 = loopCounter3 + 1;
      GetCommand(Command);
      WriteResponse(Translate("Abort"));
    }
  }
}

private function GetTitleParam( variable & TitlesArray[], variable & ParamsArray[], variable InputTitleString, variable & OutputParamString ) void {
  private variable NumTitles;
  private variable Count;
  private variable ArrayString;
  private variable TitleString;
  OutputParamString = 0;
  NumTitles=TitlesArray.GetSize();
  TitleString = StrMakeLowerCopy(InputTitleString);
  {
    for(Count = 0; Count < NumTitles;)
    {
      Count = Count + 1;
      ArrayString = StrMakeLowerCopy(TitlesArray.ElementAt( Count -1));
      if (ArrayString == TitleString)
      {
        OutputParamString = ParamsArray.ElementAt( Count -1);
        return;
      }
    }
  }
  TrcTrace(Translate("In GetTitleParam Function. The String was not found in the TitleArray.... Aborting"), Translate(""));
  TrcTrace(Translate("Title String: "), TitleString);
  abort;
}

private function DoDeckLoading( variable & LabwareArray[], variable & IsUsedArray[], variable & TipsArray[], variable & DesaltingArray[], variable VacuumPlate ) void {
  private dialog customDialog_1;
  private variable TipSlim300;
  private variable Sets;
  private variable Count;
  private variable Types[];
  private variable Volumes[];
  private variable PlateNameList[];
  private variable PlateName;
  Carrier14_Pos1 = 0;
  Carrier14_Pos2 = 0;
  Carrier14_Pos3 = 0;
  Carrier14_Pos4 = 0;
  Carrier14_Pos5 = 0;
  Carrier38_Pos1 = 0;
  Carrier38_Pos2 = 0;
  Carrier38_Pos3 = 0;
  Carrier38_Pos4 = 0;
  Carrier38_Pos5 = 0;
  FT_Cold = Translate("");
  FT_Ambient = Translate("");
  CT = Translate("");
  RR = Translate("");
  SizeX100_1 = 0;
  SizeX100_2 = 0;
  if (IsUsedArray.ElementAt( _PreRun_DesaltUsedIndex -1) == "True")
  {
    Types = HSLExtensions::Array2D::GetRow(_Desalt_LoadingArray, 1);
    Volumes = HSLExtensions::Array2D::GetRow(_Desalt_LoadingArray, 2);
    Util2::Debug::TraceArray(Translate(""), Types);
    Util2::Debug::TraceArray(Translate(""), Volumes);
    Sets=Volumes.GetSize();
    if (Volumes.ElementAt( 1 -1) != "NONE")
    {
      {
        for(Count = 0; Count < Sets;)
        {
          Count = Count + 1;
          EvalExpression = StrConcat8(Types.ElementAt( Count -1), Volumes.ElementAt( Count -1), Translate("_"), Count, Translate(" = "), Translate("1"), Translate(""), Translate(""));
          TrcTrace(Translate(""), EvalExpression);
          StrEvaluateExpr(EvalExpression);
        }
      }
    }
  }
  if (IsUsedArray.ElementAt( _PreRun_PipetteUsedIndex -1) == "True")
  {
    Tip50 = TipsArray.ElementAt( _Pipette_NTR50Index -1);
    Tip300 = TipsArray.ElementAt( _Pipette_NTR300Index -1);
    TipSlim300 = TipsArray.ElementAt( _Pipette_FTR300SlimIndex -1);
    Tip1000 = TipsArray.ElementAt( _Pipette_FTR1000Index -1);
  }
  PlateList = HSLExtensions::Array2D::GetRow(LabwareArray, 1);
  LoadingList = HSLExtensions::Array2D::GetRow(LabwareArray, 4);
  VolumeList = HSLExtensions::Array2D::GetRow(LabwareArray, 5);
  PlateNameList = HSLExtensions::Array2D::GetRow(LabwareArray, 8);
  NumLabware=PlateList.GetSize();
  {
    for(Counter = 0; Counter < NumLabware;)
    {
      Counter = Counter + 1;
      Loading=LoadingList.GetAt(Counter-1);
      Plate=PlateList.GetAt(Counter-1);
      PlateName=PlateNameList.GetAt(Counter-1);
      Volume=VolumeList.GetAt(Counter-1);
      FindVal = StrFind(Loading, Translate("Carrier"));
      if (FindVal != -1)
      {
        EvalExpression = StrConcat8(Loading, Translate(" = "), Translate("\""), Plate, Translate(":                                           "), Translate(""), PlateName, Translate("\""));
        StrEvaluateExpr(EvalExpression);
      }
      else
      {
        FindVal = StrFind(Loading, Translate("C"));
        if (FindVal == 0)
        {
          EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
          EvalExpression = StrConcat2(Translate(" "), EvalExpression);
          CT = StrConcat2(CT, EvalExpression);
        }
        FindVal = StrFind(Loading, Translate("R"));
        if (FindVal == 0)
        {
          EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
          EvalExpression = StrConcat2(Translate(" "), EvalExpression);
          RR = StrConcat2(RR, EvalExpression);
        }
        FindVal = StrFind(Loading, Translate("F"));
        if (FindVal == 0)
        {
          EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
          EvalExpression = StrConcat2(Translate(" "), EvalExpression);
          FT_Ambient = StrConcat2(FT_Ambient, EvalExpression);
        }
        FindVal = StrFind(Loading, Translate("E"));
        if (FindVal == 0)
        {
          EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
          EvalExpression = StrConcat2(Translate(" "), EvalExpression);
          FT_Cold = StrConcat2(FT_Cold, EvalExpression);
        }
      }
    }
  }
  Len = StrGetLength(FT_Ambient);
  if (Len == 0)
  {
    FT_Ambient = 0;
  }
  Len = StrGetLength(FT_Cold);
  if (Len == 0)
  {
    FT_Cold = 0;
  }
  Len = StrGetLength(RR);
  if (Len == 0)
  {
    RR = 0;
  }
  Len = StrGetLength(CT);
  if (Len == 0)
  {
    CT = 0;
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "textBlock1.IsVisible", Tip50 );
  customDialog_1.SetCustomDialogProperty( "textBlock3.IsVisible", Tip300 );
  customDialog_1.SetCustomDialogProperty( "textBlock5.IsVisible", Tip1000 );
  customDialog_1.SetCustomDialogProperty( "textBlock9.IsVisible", Tip1000 );
  customDialog_1.SetCustomDialogProperty( "textBlock10.IsVisible", SizeX100_1 );
  customDialog_1.SetCustomDialogProperty( "textBlock11.IsVisible", TipSlim300 );
  customDialog_1.SetCustomDialogProperty( "textBlock2.IsVisible", Tip50 );
  customDialog_1.SetCustomDialogProperty( "textBlock12.IsVisible", TipSlim300 );
  customDialog_1.SetCustomDialogProperty( "textBlock17.IsVisible", Tip300 );
  customDialog_1.SetCustomDialogProperty( "textBlock4.IsVisible", Tip1000 );
  customDialog_1.SetCustomDialogProperty( "textBlock6.IsVisible", Tip1000 );
  customDialog_1.SetCustomDialogProperty( "textBlock7.IsVisible", Tip1000 );
  customDialog_1.SetCustomDialogProperty( "textBlock8.IsVisible", TipSlim300 );
  customDialog_1.SetCustomDialogProperty( "textBlock13.IsVisible", Carrier14_Pos1 );
  customDialog_1.SetCustomDialogProperty( "textBlock13.Text", Carrier14_Pos1 );
  customDialog_1.SetCustomDialogProperty( "textBlock18.IsVisible", Carrier14_Pos2 );
  customDialog_1.SetCustomDialogProperty( "textBlock18.Text", Carrier14_Pos2 );
  customDialog_1.SetCustomDialogProperty( "textBlock19.Text", Carrier14_Pos3 );
  customDialog_1.SetCustomDialogProperty( "textBlock19.IsVisible", Carrier14_Pos3 );
  customDialog_1.SetCustomDialogProperty( "textBlock20.IsVisible", Carrier14_Pos4 );
  customDialog_1.SetCustomDialogProperty( "textBlock20.Text", Carrier14_Pos4 );
  customDialog_1.SetCustomDialogProperty( "textBlock21.Text", Carrier14_Pos5 );
  customDialog_1.SetCustomDialogProperty( "textBlock21.IsVisible", Carrier14_Pos5 );
  customDialog_1.SetCustomDialogProperty( "textBlock24.Text", Carrier38_Pos1 );
  customDialog_1.SetCustomDialogProperty( "textBlock24.IsVisible", Carrier38_Pos1 );
  customDialog_1.SetCustomDialogProperty( "textBlock25.Text", Carrier38_Pos2 );
  customDialog_1.SetCustomDialogProperty( "textBlock25.IsVisible", Carrier38_Pos2 );
  customDialog_1.SetCustomDialogProperty( "textBlock37.IsVisible", FT_Cold );
  customDialog_1.SetCustomDialogProperty( "textBlock37.Text", FT_Cold );
  customDialog_1.SetCustomDialogProperty( "textBlock40.IsVisible", CT );
  customDialog_1.SetCustomDialogProperty( "textBlock40.Text", CT );
  customDialog_1.SetCustomDialogProperty( "textBlock41.IsVisible", RR );
  customDialog_1.SetCustomDialogProperty( "textBlock41.Text", RR );
  customDialog_1.SetCustomDialogProperty( "textBlock42.IsVisible", FT_Ambient );
  customDialog_1.SetCustomDialogProperty( "textBlock44.Text", _Vacuum_Plate );
  customDialog_1.SetCustomDialogProperty( "textBlock22.IsVisible", Carrier38_Pos3 );
  customDialog_1.SetCustomDialogProperty( "textBlock22.Text", Carrier38_Pos3 );
  customDialog_1.SetCustomDialogProperty( "textBlock23.IsVisible", Carrier38_Pos4 );
  customDialog_1.SetCustomDialogProperty( "textBlock23.Text", Carrier38_Pos4 );
  customDialog_1.SetCustomDialogProperty( "textBlock26.IsVisible", Carrier38_Pos5 );
  customDialog_1.SetCustomDialogProperty( "textBlock26.Text", Carrier38_Pos5 );
  customDialog_1.SetCustomDialogProperty( "textBlock38.IsVisible", FT_Cold );
  customDialog_1.SetCustomDialogProperty( "textBlock39.IsVisible", CT );
  customDialog_1.SetCustomDialogProperty( "textBlock46.IsVisible", RR );
  customDialog_1.SetCustomDialogProperty( "textBlock47.IsVisible", FT_Ambient );
  customDialog_1.SetCustomDialogProperty( "textBlock47.Text", FT_Ambient );
  customDialog_1.SetCustomDialogProperty( "textBlock51.IsVisible", SizeX100_2 );
  customDialog_1.ShowCustomDialog();
}

private function ParseCSList( variable CommaSeperatedString, variable & OutputArray[] ) void {
  private variable Next_Comma_Position;
  private variable Start_Index;
  private variable Length;
  private variable End_Position;
  private variable End_Index;
  private variable CommaSeperatedStringLength;
  private variable substr;
  private variable DelimiterLength;
  OutputArray.SetSize( 0);
  if(0){
    TrcTrace(Translate("*************************Parse CS LIST ***************** "), Translate(""));
  }
  Next_Comma_Position = StrFind(CommaSeperatedString, Translate(",,,"));
  End_Index = Next_Comma_Position;
  Start_Index = 0;
  OutputArray.SetSize(0);
  DelimiterLength = StrGetLength(Translate(",,,"));
  if (End_Index == -1)
  {
    OutputArray.AddAsLast(CommaSeperatedString);
    Util2::Debug::TraceArray(Translate("Arr"), OutputArray);
    return;
  }
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      substr = StrMid(CommaSeperatedString, Start_Index, End_Index);
      OutputArray.AddAsLast(substr);
      CommaSeperatedStringLength = StrGetLength(CommaSeperatedString);
      End_Position = CommaSeperatedStringLength - 0;
      Start_Index = Next_Comma_Position + DelimiterLength;
      if (Next_Comma_Position == -1)
      {
        break;
      }
      CommaSeperatedString = StrMid(CommaSeperatedString, Start_Index, End_Position);
      Next_Comma_Position = StrFind(CommaSeperatedString, Translate(",,,"));
      End_Index = Next_Comma_Position;
      if (Next_Comma_Position == -1)
      {
        Length = StrGetLength(CommaSeperatedString);
        End_Index = Length;
      }
      Start_Index = 0;
    }
  }
}

function ChooseTips( variable _Num_NTR50Tips, variable _Num_NTR300Tips, variable _Num_Slim300Tips, variable _Num_Slim1000Tips, variable & Tip50Counter, variable & Tip300Counter, variable & Tip300SlimCounter, variable & Tip1000Counter, sequence & wasteNTR, sequence & waste300NTR ) void {
  private variable Tip1000SlimCounter;
  Tip50Counter = 0;
  Tip300Counter = 0;
  Tip300SlimCounter = 0;
  Tip1000Counter = 0;
  { sequence __temp; wasteNTR = __temp; }
  { sequence __temp; waste300NTR = __temp; }
  PFIZERTIPCOUNTERVCURRENT::ChooseTipsNTR(ML_STAR, ML_STAR.seq_Tips_NTR_50ul, ML_STAR.seq_Tips_NTR_300ul, ML_STAR.Tip50_NTR_Waste, ML_STAR.Tip300_NTR_Waste, _Num_NTR50Tips, _Num_NTR300Tips, Tip50Counter, Tip300Counter, wasteNTR, waste300NTR);
  PFIZERTIPCOUNTERVCURRENT::ChooseTipsFTR(ML_STAR, ML_STAR.MAM_Slim300_Tips, ML_STAR.seq_Tips_FTR_1000ul, _Num_Slim300Tips, _Num_Slim1000Tips, Tip300SlimCounter, Tip1000SlimCounter);
}

private function SaveTips(  ) void {
  private sequence wasteNTR;
  private sequence waste300NTR;
  PFIZERTIPCOUNTERVCURRENT::SaveTipsNTR(ML_STAR, ML_STAR.seq_COREGripTool, ML_STAR.seq_Tips_NTR_300ul, ML_STAR.seq_Tips_NTR_50ul, wasteNTR, waste300NTR);
  PFIZERTIPCOUNTERVCURRENT::SaveTipsFTR(ML_STAR, ML_STAR.MAM_Slim300_Tips, ML_STAR.seq_Tips_FTR_1000ul);
}

private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool ) void {
  private variable ret_TipToolError;
  if (int_FlipTubeFunction == 1)
  {
    MECC::TraceComment(Translate("=====================\nInitialize Fliptool\n====================="));
    FLIPTUBETOOL::Initialize(0);
  }
  if (int_FlipTubeFunction == 2)
  {
    MECC::TraceComment(Translate("=====================\nOpen Fliptubes\n====================="));
    if (var_PickUpTool == 1)
    {
      FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
    }
    ret_TipToolError = FLIPTUBETOOL::FlipTubeOpen(seq_TubeSequence, 0, str_ChannelPattern);
    if (ret_TipToolError == 0)
    {
      TrcTrace(Translate("***Error*** Flip Tube Open Error, Will Not Abort"), Translate("Extra Step to aid in open will commence"));
    }
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 12, 0, 0);
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -12, 0, 0);
    if (var_EjectTool == 1)
    {
      FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
    }
  }
  if (int_FlipTubeFunction == 3)
  {
    MECC::TraceComment(Translate("=====================\nClose Fliptubes Fliptubes\n====================="));
    if (var_PickUpTool == 1)
    {
      FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
    }
    FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
    if (var_EjectTool == 1)
    {
      FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
    }
  }
  if (int_FlipTubeFunction == 4)
  {
    MECC::TraceComment(Translate("=====================\nSpecial Close Fliptubes\n====================="));
    if (var_PickUpTool == 1)
    {
      FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
    }
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -10, -15, 0);
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 10, 15, 0);
    FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
    if (var_EjectTool == 1)
    {
      FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
    }
  }
}

private function ArrayIsItemPresent( variable & Array[], variable Item ) variable {
  private variable Size;
  private variable ArrayItemType;
  private variable ItemType;
  private variable count;
  Size=Array.GetSize();
  ItemType = StrGetType(Item);
  {
    for(count = 0; count < Size;)
    {
      count = count + 1;
      ArrayItemType = StrGetType(Array.ElementAt( count -1));
      if (ArrayItemType == ItemType)
      {
        if (Array.ElementAt( count -1) == Item)
        {
          return (1);
        }
      }
    }
  }
  return (0);
}
