private function ChooseMethodFile(  ) variable ;
private function RunMakerScript( variable Excel_File_Path, variable Start_Pos, variable RunType ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  COMMANDS::FinishRun();
  _ASYNC_PROCESS_USER_INFORMATION_KillFlag = Translate("True");
  HEATER::DeInit(ML_STAR, Translate(""));
  LID::DeInit(ML_STAR, Translate(""));
  NOTIFY::DeInit(ML_STAR, Translate(""));
  PIPETTE::DeInit(ML_STAR, Translate(""));
  STATUSUPDATE::DeInit(ML_STAR, Translate(""));
  TIMER::DeInit(ML_STAR, Translate(""));
  TRANSPORT::DeInit(ML_STAR, Translate(""));
  VACUUM::DeInit(ML_STAR, Translate(""));
  MAGNETIC_BEADS::DeInit(ML_STAR, Translate(""));
}

private function RunMakerScript( variable Excel_File_Path, variable Start_Pos, variable RunType ) void {
  private variable Command_Base;
  private event _Temp;
  private variable __Temp;
  TrcTrace(Translate("******************************************************************"), Translate(""));
  TrcTrace(Translate("************ Running Method Maker Script *****************"), Translate(""));
  TrcTrace(Translate("******************************************************************"), Translate(""));
  PythonRootPath = SCRIPT::GetPythonRootPath();
  ScriptRootPath = SCRIPT::GetScriptRootPath();
  Command_Base = StrConcat12(Translate("C:\\windows\\system32\\cmd.exe /K "), Translate("\"\""), PythonRootPath, Translate("\\python.exe\" "), Translate(" \""), ScriptRootPath, Translate("\\MethodMaker.py\""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  Command_Base = StrConcat12(Command_Base, Translate(" "), Translate("\""), Excel_File_Path, Translate("\""), Translate(" "), Start_Pos, Translate(" "), RunType, Translate("\""), Translate(""), Translate(""));
  TrcTrace(Command_Base, Translate(""));
  _ = Util::AsyncShell(Command_Base, 2, _Temp, __Temp);
}

private function ChooseMethodFile(  ) variable {
  private variable loopCounter2;
  TrcTrace(Translate("******************************************************************"), Translate(""));
  TrcTrace(Translate("******************* Selecting Method File ********************"), Translate(""));
  TrcTrace(Translate("******************************************************************"), Translate(""));
  AswStandardDialogs::Initialize();
  Out = Translate("");
  {
    loopCounter2 = 0;
    while (Out == "")
    {
      loopCounter2 = loopCounter2 + 1;
      AswStandardDialogs::FileBrowserDialog(Translate("Choose File"), 0, 0, 0, Translate("Please Choose a Method Maker Excel File"), 1, Translate(""), 0, Translate(""), Out);
      if (Out == "")
      {
        AswStandardDialogs::MessageDialog(Translate("Error"), 1, 0, 0, 0, 0, Translate("File not selected... Please select a file from the dialog."));
      }
    }
  }
  AswStandardDialogs::Terminate();
  return (Out);
}
