 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Loading\\DeckLoadingVCurrent.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Notify\\Module\\Notify.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\StatusUpdate\\Module\\StatusUpdate.hs_" }
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.res"
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Heater\\Module\\Heater.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Timer\\Module\\Timer.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Transport\\Module\\Transport.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Vacuum\\Module\\Vacuum.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Script\\Module\\Script.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Lid\\Module\\Lid.hs_" }
variable Out;
variable Command[];
variable _;
variable LabwareArray[];
variable loopCounter4;
variable loopCounter5;
sequence None;
sequence _Desalt_Source;
sequence _Desalt_Destination;
sequence _Desalt_Buffer;
variable _Desalt_TipType;
variable _Desalt_LoadingArray[];
variable _Desalt_Sets;
variable ParseNumeric;
variable ParseAlpha;
variable Tip300Counter;
sequence waste300NTR;
variable _SampleNumber;
variable _SampleEndPosition;
variable _SampleStartPosition;
sequence _Desalt_Waste;
dialog customDialog_1;
dialog customDialog_2;
variable _PreRun_DesaltUsedIndex;
variable _PreRun_IsUsed[];
variable _Pipette_FTR1000Index;
variable _Pipette_FTR300SlimIndex;
variable _Pipette_NTR300Index;
variable _Pipette_NTR50Index;
variable _Pipette_UsedTips[];
variable _Desalt_VolumeIndex;
variable _Desalt_TypeIndex;
variable NumTipsFTR1000;
variable NumTipsFTR300Slim;
variable NumTipsNTR300;
variable NumTipsNTR50;
variable intDaisyHHC1;
variable strCOMHHC1;
variable intHHC1Return;
variable arrHHC1[];
variable _PreRun_LogUsedIndex;
variable TitleString;
variable CoordinateString;
dialog customDialog_3;
variable _Log_Selection;
variable _Log_Options[];
variable _Log_Text;
dialog customDialog_4;
variable _Vacuum_Plate;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.lay", "ML_STAR", hslTrue);
global variable ScriptRootPath;
global variable PythonRootPath;
variable SequenceStringsArray[];
variable ModuleCommand;
variable Module;
variable CommandString;
variable Dict[];
variable ReturnString;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    DECKLOADINGVCURRENT::_InitLibrary();
    PIPETTE::_InitLibrary();
    LABWARE::_InitLibrary();
    SEQUENCES::_InitLibrary();
    COMMANDS::_InitLibrary();
    NOTIFY::_InitLibrary();
    STATUSUPDATE::_InitLibrary();
    HEATER::_InitLibrary();
    TIMER::_InitLibrary();
    TRANSPORT::_InitLibrary();
    VACUUM::_InitLibrary();
    SCRIPT::_InitLibrary();
    LID::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    SCRIPT::Init();
    COMMANDS::StartSystem();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    _SampleStartPosition = 0;
    _SampleEndPosition = 0;
    _SampleNumber = 0;
    _Log_Options.SetSize(0);
    _Log_Options.AddAsLast(Translate("Run From Beginning of Method"));
    _Log_Options.AddAsLast(Translate("Run From Above Step"));
    _Log_Options.AddAsLast(Translate("Run Step Before Above Step"));
    _Log_Options.AddAsLast(Translate("Run Step After Above Step"));
    Out = ChooseMethodFile();
    strCOMHHC1 = Translate("COM4");
    intDaisyHHC1 = 0;
    intHHC1Return = 0;
    arrHHC1.SetSize(1);
    intHHC1Return = HamiltonHeaterCooler::Connect(strCOMHHC1, 5, intDaisyHHC1, arrHHC1);
    HamiltonHeaterCooler::SetTemperature(arrHHC1.ElementAt( 1 -1), 0.0, 8.0, 4.0, 0, 1);
    MECC::TraceComment(Translate("##################################\n########### Pre Run and Init ###########\n##################################"));
    RunMakerScript(Out, 1, Translate("Init"));
    {
      loopCounter4 = 0;
      while ("" == "")
      {
        loopCounter4 = loopCounter4 + 1;
        COMMANDS::GetCommand(Command);
        Util2::Debug::TraceArray(Translate(""), Command);
        CommandString = Command.ElementAt( 1 -1);
        if (Command.ElementAt( 1 -1) == "END")
        {
          break;
        }
        Module = COMMANDS::GetCommandStringModule(CommandString);
        ModuleCommand = COMMANDS::GetCommandStringCommand(CommandString);
        if (Module == "PreRun")
        {
          if (ModuleCommand == "Labware")
          {
            LABWARE::Init(CommandString);
            MECC::TraceComment(Translate("***** Checking Labware module sequences for validity *****"));
            MECC::TraceComment(Translate("***** Checking Labware module sequences for validity ***** Labware"));
            LABWARE::GetAllSequenceStrings(SequenceStringsArray);
            SEQUENCES::CheckSequences(ML_STAR, SequenceStringsArray);
            MECC::TraceComment(Translate("***** Checking Labware module sequences for validity ***** SUCCESS"));
            ReturnString = Translate("True");
          }
          if (ModuleCommand == "Samples")
          {
            COMMANDS::ParseCommandParametersString(CommandString, Dict);
            COMMANDS::GetDictionaryItem(Dict, Translate("SampleNumber"), _SampleNumber);
            _SampleNumber = StrIVal(_SampleNumber);
            ReturnString = Translate("True");
          }
          if (ModuleCommand == "Pipette")
          {
            ReturnString = PIPETTE::Init(ML_STAR, CommandString);
          }
          if (ModuleCommand == "Notify")
          {
            ReturnString = NOTIFY::Init(ML_STAR, CommandString);
          }
          if (ModuleCommand == "StatusUpdate")
          {
            ReturnString = STATUSUPDATE::Init(ML_STAR, CommandString);
          }
          if (ModuleCommand == "Desalt")
          {
            ReturnString = Translate("True");
          }
          if (ModuleCommand == "Vacuum")
          {
            ReturnString = VACUUM::Init(ML_STAR, CommandString);
          }
          if (ModuleCommand == "Heater")
          {
            ReturnString = HEATER::Init(ML_STAR, CommandString);
          }
          if (ModuleCommand == "Transport")
          {
            ReturnString = TRANSPORT::Init(ML_STAR, CommandString);
          }
          if (ModuleCommand == "Timer")
          {
            ReturnString = TIMER::Init(ML_STAR, CommandString);
          }
          if (ModuleCommand == "Log")
          {
            _PreRun_IsUsed.SetAt(_PreRun_LogUsedIndex-1, Translate("True"));
            COMMANDS::ParseCommandParametersString(CommandString, Dict);
            COMMANDS::GetDictionaryItem(Dict, Translate("Title"), TitleString);
            COMMANDS::GetDictionaryItem(Dict, Translate("Coordinates"), CoordinateString);
            _Log_Text = StrConcat12(Translate("There is a RunLog present. This following step is the latest step that was logged for the system. Please choose how you would like to proceed from the dropdown."), Translate("\n\nNOTE: Be sure to confirm step selection in the Hamilton log if required.\n\n"), Translate("Step Found:\n"), TitleString, Translate("\n"), CoordinateString, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            customDialog_4.InitCustomDialog("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");
            customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _Log_Options );
            customDialog_4.SetCustomDialogProperty( "textBlock1.Text", _Log_Text );
            customDialog_4.ShowCustomDialog();
            _Log_Selection = customDialog_4.GetCustomDialogProperty( "comboBox1.Text" );
            customDialog_3.InitCustomDialog("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");
            customDialog_3.ShowCustomDialog();
            ReturnString = _Log_Selection;
          }
          COMMANDS::WriteResponse(ReturnString);
        }
      }
    }
    abort;
    FinishRun();
    MECC::TraceComment(Translate("##################################\n######### End Pre Run and Init ##########\n##################################"));
    DECKLOADINGVCURRENT::DoDeckLoading(LabwareArray, _PreRun_IsUsed, _Pipette_UsedTips, _Desalt_LoadingArray, _Vacuum_Plate);
    COMMANDS::StartSystem();
    RunMakerScript(Out, _SampleStartPosition, Translate("Run"));
    {
      loopCounter4 = 0;
      while ("" == "")
      {
        loopCounter4 = loopCounter4 + 1;
        COMMANDS::GetCommand(Command);
        CommandString = Command.ElementAt( 1 -1);
        Util2::Debug::TraceArray(Translate(""), Command);
        if (Command.ElementAt( 1 -1) == "END")
        {
          break;
        }
        Module = COMMANDS::GetCommandStringModule(CommandString);
        ModuleCommand = COMMANDS::GetCommandStringCommand(CommandString);
        if (Module == "Pipette")
        {
          ReturnString = PIPETTE::DoCommand(ML_STAR, CommandString);
        }
        if (Module == "Notify")
        {
          ReturnString = NOTIFY::DoCommand(ML_STAR, CommandString);
        }
        if (Module == "StatusUpdate")
        {
          ReturnString = STATUSUPDATE::DoCommand(ML_STAR, CommandString);
        }
        if (Module == "Desalt")
        {
          ReturnString = Translate("True");
        }
        if (Module == "Heater")
        {
          ReturnString = HEATER::DoCommand(ML_STAR, CommandString);
        }
        if (Module == "Transport")
        {
          ReturnString = TRANSPORT::DoCommand(ML_STAR, CommandString);
        }
        if (Module == "Timer")
        {
          ReturnString = TIMER::DoCommand(ML_STAR, CommandString);
        }
        if (Module == "Vacuum")
        {
          ReturnString = VACUUM::DoCommand(ML_STAR, CommandString);
        }
        COMMANDS::WriteResponse(ReturnString);
      }
    }
    FinishRun();
    HEATER::DeInit(ML_STAR, Translate(""));
    LID::DeInit(ML_STAR, Translate(""));
    NOTIFY::DeInit(ML_STAR, Translate(""));
    PIPETTE::DeInit(ML_STAR, Translate(""));
    STATUSUPDATE::DeInit(ML_STAR, Translate(""));
    TIMER::DeInit(ML_STAR, Translate(""));
    TRANSPORT::DeInit(ML_STAR, Translate(""));
    VACUUM::DeInit(ML_STAR, Translate(""));
    DECKLOADINGVCURRENT::_ExitLibrary();
    PIPETTE::_ExitLibrary();
    LABWARE::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    NOTIFY::_ExitLibrary();
    STATUSUPDATE::_ExitLibrary();
    HEATER::_ExitLibrary();
    TIMER::_ExitLibrary();
    TRANSPORT::_ExitLibrary();
    VACUUM::_ExitLibrary();
    SCRIPT::_ExitLibrary();
    LID::_ExitLibrary();
  } }
